PsychoPy2experiment version="2023.2.2"
Settings
  Data filename = u'data/%s_1_1_1_%s_%s_%s' % (expInfo['主试ID'], expName, expInfo['编号'], expInfo['date'])
  Experiment info = {'编号': '', '主试ID': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  color = $[-1,-1,-1]
  expName = Flanker
  keyboardBackend = ioHub
  logging level = debug
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Routines
  Routine instruction
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    TextComponent text_instruction
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Click here to continue.
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  Routine mixed
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  Routine test
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    SoundComponent sound_19
      sound = audio/F9.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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  Routine finish
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    TextComponent text_3
      font = heiti sc
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.5
      text = 任务已经全部完成了，感谢您的参与！
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    SoundComponent sound_12
      saveStartStop = False
      sound = audio/F-f.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.5
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  Routine test__
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    ImageComponent image_5
      image [set every repeat] = $left_arrow
      opacity [set every repeat] = 1
      ori [set every repeat] = 0
      pos [set every repeat] = (-0.4, -0.2)
      size [set every repeat] = (0.25, 0.25)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent image_6
      image [set every repeat] = $right_arrow
      opacity [set every repeat] = 1
      ori [set every repeat] = 0
      pos [set every repeat] = (0.4, -0.2)
      size [set every repeat] = (0.25, 0.25)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent image_7
      image [set every repeat] = $middle
      opacity [set every repeat] = 1
      ori [set every repeat] = 0
      pos [set every repeat] = (0, 0.3)
      size [set every repeat] = (0.5, 0.5)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent key_resp_3
      allowedKeys [set every repeat] = 'z','m'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
      storeCorrect = True
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  Routine next_status
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Experiment:
        isForward = 0
      Begin Routine:
        if counterOne >= 3:
            outPut = 'Lets move forward. Press the space key to continue.'
            block.finished = True
        if counterTwo>1:
            outPut = 'Please try the practice again. Press the space key.'
            isForward += 1
            block.finished = False
            counterOne = 0
            counterTwo = 0
            if isForward == 3:
                outPut = 'Thank you for your participation!'
                block.finished = True
    TextComponent text_4
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text = $outPut
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    CodeComponent code_9
      Code Type = JS
      End JS Routine:
        if ((isForward === 3)) {
            psychoJS.quit();
        }
    KeyboardComponent key_resp_12
      allowedKeys =  'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instruction_1
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    TextComponent text_homebase
      font = Heiti SC
      letterHeight = 0.035
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        欢迎您参加本任务。

        在这个任务中，您将会看到一排指向不同方向的箭头，

        但首先，让我们先学习一下按键，请把您的左手食指

        放在Z键上，并把右手食指放在M键上。



        按空格键继续。
    KeyboardComponent wecomle_resp
      allowedKeys =  'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    SoundComponent sound_1
      saveStartStop = False
      sound = audio/F1.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      syncScreenRefresh = False
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  Routine instruction_2
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    TextComponent text
      font = Heiti SC
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        您会看到一排箭头，

        您需要按下与“中间”箭头指向方向相同的按键。

        按空格键继续。
    ImageComponent image_8
      image = img/congruent_left.png
      pos = (0, 0.38)
      size = (0.53, 0.53)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent image_9
      image = img/left_arrow.png
      pos = (-0.4, -0.2)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent image_10
      image = img/right_arrow.png
      pos = (0.4, -0.2)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    SoundComponent sound_2
      sound = audio/F3.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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    KeyboardComponent key_resp_10
      allowedKeys =  'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instruction_2_1
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    ImageComponent image_11
      image = img/congruent_left_flash.png
      pos = (0, 0.38)
      size = (0.53, 0.53)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent image_12
      image = img/left_arrow.png
      pos = (-0.4, -0.2)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      texture resolution = 512
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    ImageComponent image_13
      image = img/right_arrow.png
      pos = (0.4, -0.2)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    TextComponent text_5
      font = Heiti SC
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        如果中间的箭头指向左方，请选择代表左的按键Z。


        按Z键继续。
    SoundComponent sound_3
      sound = audio/F6.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    ImageComponent image_24
      image = img/left_arrow_border.png
      opacity [set every frame] = sin(t*10)
      pos = (-0.4, -0.2)
      size = (0.25, 0.25)
      startVal [time (s)] = 2
      texture resolution = 512
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    KeyboardComponent key_resp_5
      allowedKeys =  'z'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instruction_2_2
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    ImageComponent image_14
      image = img/congruent_right_flash.png
      pos = (0, 0.38)
      size = (0.53, 0.53)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent image_15
      image = img/left_arrow.png
      pos = (-0.4, -0.2)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent image_16
      image = img/right_arrow.png
      pos = (0.4, -0.2)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      texture resolution = 512
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    TextComponent text_6
      font = heiti SC
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        如果中间的箭头指向右方，请选择代表右的按键M。


        按M键继续。
    SoundComponent sound_4
      sound = audio/F7.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    ImageComponent image_25
      image = img/right_arrow_border.png
      opacity [set every frame] = sin(t*10)
      pos = (0.4, -0.2)
      size = (0.25, 0.25)
      startVal [time (s)] = 2
      texture resolution = 512
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    KeyboardComponent key_resp_6
      allowedKeys =  'm'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instruction_2_3
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    ImageComponent image_17
      image = img/incongruent_right_flash.png
      pos = (0, 0.38)
      size = (0.53, 0.53)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent image_18
      image = img/left_arrow.png
      pos = (-0.4, -0.2)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent image_19
      image = img/right_arrow.png
      pos = (0.4, -0.2)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      texture resolution = 512
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    TextComponent text_7
      font = heiti sc
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        有时候中间箭头的方向会和其他箭头不同，

        其他箭头向左，而中间箭头指右。


        请选择M键。
    SoundComponent sound_5
      sound = audio/F8.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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    ImageComponent image_23
      image = img/right_arrow_border.png
      opacity [set every frame] = sin(t*10)
      pos = (0.4, -0.2)
      size = (0.25, 0.25)
      startVal [time (s)] = 5
      texture resolution = 512
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    KeyboardComponent key_resp_7
      allowedKeys =  'm'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instruction_2_4
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    ImageComponent image_20
      image = img/incongruent_left_flash.png
      pos = (0, 0.38)
      size = (0.53, 0.53)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent image_21
      image = img/left_arrow.png
      pos = (-0.4, -0.2)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      texture resolution = 512
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    ImageComponent image_22
      image = img/right_arrow.png
      pos = (0.4, -0.2)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    TextComponent text_8
      font = heiti sc
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        有时候中间的箭头的方向会和其他箭头不同，

        其他箭头向右，而中间箭头指左。


        请选择Z键。
    SoundComponent sound_6
      sound = audio/F9.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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    ImageComponent image_26
      image = img/left_arrow_border.png
      opacity [set every frame] = sin(t*10)
      pos = (-0.4, -0.2)
      size = (0.25, 0.25)
      startVal [time (s)] = 5
      texture resolution = 512
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    KeyboardComponent key_resp_8
      allowedKeys =  'z'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instruction_2_5
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    ImageComponent image_27
      image = img/incongruent_left_flash.png
      pos = (0, 0.38)
      size = (0.53, 0.53)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent image_29
      image = img/right_arrow.png
      pos = (0.4, -0.2)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    TextComponent text_9
      font = heiti sc
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        请一直选择与中间箭头指向方向相同的按钮，

        您会看到“中间”这个词来提醒您。


        按空格键继续。
    SoundComponent sound_7
      sound = audio/F10.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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    ImageComponent image_30
      image = img/left_arrow_border.png
      pos = (-0.4, -0.2)
      size = (0.25, 0.25)
      startVal [time (s)] = 0
      texture resolution = 512
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    KeyboardComponent key_resp_11
      allowedKeys =  'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instruction_3
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    ImageComponent image_28
      image = img/star_text.png
      size = (1,1)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    SoundComponent sound_8
      sound = audio/Step 11
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine test_2
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  Routine inter_trial_interval
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    ImageComponent image_31
      image = img/left_arrow.png
      pos = (-0.4, -0.2)
      saveStartStop = False
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.8
      texture resolution = 512
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    ImageComponent image_32
      image = img/right_arrow.png
      pos = (0.4, -0.2)
      saveStartStop = False
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.8
      texture resolution = 512
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  Routine fixation
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    TextComponent fix_1
      letterHeight = 0.05
      pos = (0, .2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $thisISI
      text = +
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    ImageComponent image_33
      image = img/left_arrow.png
      pos = (-0.4, -0.2)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $thisISI
      texture resolution = 512
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    ImageComponent image_34
      image = img/right_arrow.png
      pos = (0.4, -0.2)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $thisISI
      texture resolution = 512
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  Routine this_is_test_1
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    KeyboardComponent key_resp
      allowedKeys = 'z','m'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    TextComponent text_11
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        Any text

        including line breaks
  Routine when_press_2
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        if key_resp_2.keys !=None:
            if key_resp_2.keys[0] =='z':
                if key_resp_2.corr:
                    left = 'img/left_arrow.png'
                    right = 'img/right_arrow.png'

                else:
                    left = 'img/left_arrow.png'
                    right = 'img/right_arrow.png'


            elif key_resp_2.keys[0] =='m':
                if key_resp_2.corr:
                    right = 'img/right_arrow.png'
                    left = 'img/left_arrow.png'

                else:
                    left = 'img/left_arrow.png'
                    right = 'img/right_arrow.png'

        elif key_resp_2.keys ==None:
            if corrAns == 'z':
                    right = 'img/right_arrow.png'
                    left = 'img/left_arrow.png'

            elif corrAns == 'm':
                    left = 'img/left_arrow.png'
                    right = 'img/right_arrow.png'
    ImageComponent image_44
      image [set every repeat] = $middle
      opacity [set every repeat] = 1
      ori [set every repeat] = 0
      pos [set every repeat] = (0, 0.38)
      size [set every repeat] = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
      texture resolution = 512
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    ImageComponent image_45
      image [set every repeat] = $left
      opacity [set every repeat] = 1
      ori [set every repeat] = 0
      pos [set every repeat] = (-0.4, -0.2)
      size [set every repeat] = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      texture resolution = 512
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    ImageComponent image_46
      image [set every repeat] = $right
      opacity [set every repeat] = 1
      ori [set every repeat] = 0
      pos [set every repeat] = (0.4,-0.2)
      size [set every repeat] = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      texture resolution = 512
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  Routine dummy_resources
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    SoundComponent sound_14
      sound = audio/F-a.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    SoundComponent sound_15
      sound = audio/F-b.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    SoundComponent sound_16
      sound = audio/F-c.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    SoundComponent sound_17
      sound = audio/F-d.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    SoundComponent sound_18
      sound = audio/F-e.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent image_47
      image = img/right_arrow_red.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      texture resolution = 512
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    ImageComponent image_48
      image = img/left_arrow_red.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      texture resolution = 512
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    SoundComponent sound_23
      sound = audio/F-g.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine next_status_2
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    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Routine:
        if counterOne >= 3:
            test_trail = 1
            practice_3 = 0
            practice_4 = 0
            counterOne =0
            counterTwo =0
            audio_2='audio/F-d.wav'
        elif counterTwo > 1:
            test_trail =0
            practice_3 = 1
            counterOne =0
            counterTwo =0
            audio_2= 'audio/F-e.wav'
    SoundComponent sound_20
      sound [set every repeat] = $audio_2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      volume [set every repeat] = 1
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    TextComponent text_15
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text = Press space key to continue.
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    KeyboardComponent key_resp_13
      allowedKeys =  'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine next_status_3
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    CodeComponent code_7
      Code Type = Auto->JS
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      Begin Routine:
        if counterOne >= 3:
            test_trail = 1
            practice_3 = 0
            practice_4 = 0
            counterOne =0
            counterTwo =0
            audio_2='audio/F-d.wav'
        elif counterTwo > 1:
            test_trail =0
            practice_4 = 1
            counterOne =0
            counterTwo =0
            audio_2= 'audio/F-e.wav'
    SoundComponent sound_21
      sound [set every repeat] = $audio_2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      volume [set every repeat] = 1
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    TextComponent text_16
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text = Press space key to continue.
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    KeyboardComponent key_resp_14
      allowedKeys =  'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine next_status_4
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    CodeComponent code_8
      Code Type = Auto->JS
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      Begin Routine:
        if counterOne >= 3:
            test_trail = 1
            counterOne =0
            counterTwo =0
            audio_2='audio/F-d.wav'
        elif counterTwo > 1:
            test_trail =0
            counterOne =0
            counterTwo =0
            audio_2= 'audio/F-g.wav'
    SoundComponent sound_22
      sound [set every repeat] = $audio_2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      volume [set every repeat] = 1
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    TextComponent text_17
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text = Press space key to continue.
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    KeyboardComponent key_resp_15
      allowedKeys =  'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ISIcode
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    CodeComponent code_10
      Code Type = Both
      End JS Routine:
        ISIRange = linspace(1000, 1500, 500);
        shuffle(ISIRange);
        thisISI = (ISIRange[0] / 1000);
        console.log("thisISI: ", thisISI);
        trials.addData("ISI", thisISI);
        thistype = 'exercise';
        trials.addData('type', thistype)
      End Routine:
        # pick the ISI for the next routine
        # this code component is set to 'both' because we need to remove the 'np'
        # at the start of np.linspace (this is a python library JS won't know what to call.

        # make range from a to b in n stepsizes
        ISIRange = np.linspace(1000, 1500, 500)

        # picking from a shuffled array is easier for random selection in JS
        shuffle(ISIRange)
        thisISI = ISIRange[0]/1000 # the first item of the shuffled array

        # show in console for debugging
        print('thisISI: ', thisISI)

        # save this ISI to our output file
        trials.addData('ISI', thisISI)

        # save the type of trials to our output file
        thistype = 'exercise'
        trials.addData('type', thistype)
  Routine Stim
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    ImageComponent image_39
      image [set every repeat] = $empty
      opacity [set every repeat] = 1
      ori [set every repeat] = 0
      pos [set every repeat] = (0, .2)
      size [set every repeat] = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.1
      texture resolution = 512
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    ImageComponent image_41
      image [set every repeat] = $middle
      opacity [set every repeat] = 1
      ori [set every repeat] = 0
      pos [set every repeat] = (0, .2)
      size [set every repeat] = (0.5, 0.5)
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 9.9
      texture resolution = 512
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    ImageComponent image
      image [set every repeat] = $left_arrow
      opacity [set every repeat] = 1
      ori [set every repeat] = 0
      pos [set every repeat] = (-0.4, -0.2)
      size [set every repeat] = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      texture resolution = 512
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    ImageComponent image_2
      image [set every repeat] = $right_arrow
      opacity [set every repeat] = 1
      ori [set every repeat] = 0
      pos [set every repeat] = (0.4,-0.2)
      size [set every repeat] = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      texture resolution = 512
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    KeyboardComponent key_resp_2
      allowedKeys [set every repeat] = 'z','m','None'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      store = first key
      storeCorrect = True
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  Routine Cue
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    ImageComponent image_38
      image = img/middle.jpeg
      pos = (0, .2)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      texture resolution = 512
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    ImageComponent image_36
      image = img/left_arrow.png
      pos = (-0.4, -0.2)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      texture resolution = 512
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    ImageComponent image_37
      image = img/right_arrow.png
      pos = (0.4, -0.2)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      texture resolution = 512
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  Routine Feedback
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    CodeComponent code
      Code Type = Both
      Begin JS Routine:
        if (key_resp_2.keys) {
            if ((key_resp_2.keys[0] === "z")) {
                if (key_resp_2.corr) {
                    left = "img/left_arrow_border.png";
                    right = "img/right_arrow.png";
                    audio = "audio/F-b.wav";
                } else {
                    left = "img/left_arrow.png";
                    right = "img/right_arrow_red.png";
                    audio = "audio/F-a.wav";
                }
            } else {
                if ((key_resp_2.keys[0] === "m")) {
                    if (key_resp_2.corr) {
                        right = "img/right_arrow_border.png";
                        left = "img/left_arrow.png";
                        audio = "audio/F-b.wav";
                    } else {
                        left = "img/left_arrow_red.png";
                        right = "img/right_arrow.png";
                        audio = "audio/F-a.wav";
                    }
                }
            }
        } else {
            if ((corrAns === "m")) {
                left = "img/left_arrow.png";
                right = "img/right_arrow_red.png";
                audio = "audio/F-a.wav";
            } else {
                right = "img/right_arrow.png";
                left = "img/left_arrow_red.png";
                audio = "audio/F-a.wav";
            }
        }
      Begin Routine:
        if key_resp_2.keys:
            if key_resp_2.keys[0] =='z':
                if key_resp_2.corr:
                    left = 'img/left_arrow_border.png'
                    right = 'img/right_arrow.png'
                    audio = 'audio/F-b.wav'
                else:
                    left = 'img/left_arrow.png'
                    right = 'img/right_arrow_red.png'
                    audio = 'audio/F-a.wav'

            elif key_resp_2.keys[0] =='m':
                if key_resp_2.corr:
                    right = 'img/right_arrow_border.png'
                    left = 'img/left_arrow.png'
                    audio = 'audio/F-b.wav'
                else:
                    left = 'img/left_arrow_red.png'
                    right = 'img/right_arrow.png'
                    audio= 'audio/F-a.wav'
        else:
            if corrAns == 'm':
                        left = 'img/left_arrow.png'
                        right = 'img/right_arrow_red.png'
                        audio= 'audio/F-a.wav'
            else:
                    right = 'img/right_arrow.png'
                    left = 'img/left_arrow_red.png'
                    audio= 'audio/F-a.wav'
      End JS Routine:
        sound_9 = new sound.Sound({
              win: psychoJS.window,
              value: 'A',
              secs: 5,
              });
        sound_9.setVolume(1.0);
    ImageComponent image_42
      image [set every repeat] = $middle
      opacity [set every repeat] = 1
      ori [set every repeat] = 0
      pos [set every repeat] = (0, .2)
      size [set every repeat] = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 5
      texture resolution = 512
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    ImageComponent image_3
      image [set every repeat] = $left
      opacity [set every repeat] = 1
      ori [set every repeat] = 0
      pos [set every repeat] = (-0.4, -0.2)
      size [set every repeat] = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      texture resolution = 512
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    ImageComponent image_43
      image [set every repeat] = $right
      opacity [set every repeat] = 1
      ori [set every repeat] = 0
      pos [set every repeat] = (0.4,-0.2)
      size [set every repeat] = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      texture resolution = 512
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    SoundComponent sound_9
      sound [set every repeat] = $audio
      startVal [time (s)] = 0
      stopVal [duration (s)] = 5
      volume [set every repeat] = 1
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  Routine UpdateAccuracy
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        counterOne=0
        counterTwo=0
      Begin Routine:
        if key_resp_2.keys:
            if key_resp_2.corr:
                counterOne +=1
            else:
                counterTwo +=1
        else:
            key_resp_2.corr = 0
            counterTwo +=1
  Routine Main_Exp_Instructions
    TextComponent text_10
      font = heiti sc
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        准备好，让我们开始正式实验。

        请保持注视屏幕上的“+”注视点。
        试着在保持正确的同时尽可能快地回答。

        如果您回答错误，继续回答下一题即可。
        记得，回答完之后把手指放回Z键和M键上。


        按空格键继续。
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    KeyboardComponent key_resp_9
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    SoundComponent sound_13
      saveStartStop = False
      sound = audio/F12_new.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 40
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  Routine Instructions_3
    TextComponent text_2
      font = heiti sc
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        现在请试一试。

        请保持注视屏幕上的“+”注视点。
        试着在保持正确的同时尽可能快地回答。

        如果您回答错误，继续回答下一题即可。
        记得，回答完之后把手指放回Z键和M键上。


        按空格键继续。
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    KeyboardComponent key_resp_16
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    SoundComponent sound_24
      saveStartStop = False
      sound = audio/F11_new.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 40
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  Routine Retry_practice_Instructions
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        if counterOne >= 3:
            test_trail = 1
            practice_2 = 0
            practice_3 =0
            practice_4 = 0
            counterOne =0
            counterTwo =0
            audio_2='audio/F-d.wav'
        elif counterTwo > 1:
            practice_2 = 1
            counterOne =0
            counterTwo =0
            audio_2= 'audio/F-e.wav'
    SoundComponent sound_11
      sound [set every repeat] = $audio_2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      volume [set every repeat] = 1
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    TextComponent text_23
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text = Press space key to continue.
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    KeyboardComponent key_resp_17
      allowedKeys =  'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine JS_code
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    CodeComponent JScode
      Code Type = JS
      Before JS Experiment:
        // for our own functions we need these specified in the global space
        // so these are defined in the "Before experiment" tab
        // linspace (this will be used in place of numpy.linspace for picking ISI)

        function linspace(a,b,n) {
            if(typeof n === "undefined") n = Math.max(Math.round(b-a)+1,1);
            if(n<2) { return n===1?[a]:[]; }
            var i,ret = Array(n);
            n--;
            for(i=n;i>=0;i--) { ret[i] = (i*b+(n-i)*a)/n; }
            return ret;
        }
      Begin JS Experiment:
        // shuffle is push in JS so defining shuffle for our JS experiment code
        shuffle = util.shuffle;
  Routine continueStatus
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    CodeComponent code_11
      Code Type = Auto->JS
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      Begin Experiment:
        isForward = 0
      Begin Routine:
        if counterOne >= 3:
            outPut = '做得好，练习结束了。'+'\n'+'\n'+'让我们开始正式实验吧！'+'\n'+'\n'+'按空格键继续。'
            audio = 'audio/F-d.wav'
            block.finished = True
        if counterTwo>1:
            outPut = '很遗憾，这次练习失败了，让我们再试一次。'+'\n'+'\n'+'\n'+'按空格键继续。'
            audio = 'audio/F-e.wav'
            isForward += 1
            block.finished = False
            counterOne = 0
            counterTwo = 0
            if isForward == 3:
                outPut = '很遗憾，您没能通过练习环节。'+'\n'+'\n'+'任务结束，感谢您的参与。'
                audio = 'audio/F-g.wav'
                block.finished = True
    TextComponent text_24
      font = heiti sc
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every frame] = $outPut
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    CodeComponent code_12
      Code Type = JS
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      End JS Routine:
        if ((isForward === 3)) {
            psychoJS.quit();
        }
    KeyboardComponent key_resp_18
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    SoundComponent sound_10
      saveStartStop = False
      sound [set every repeat] = $audio
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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  Routine QuitEarly_prac
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    CodeComponent code_13
      Code Type = JS
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      Begin JS Routine:
        psychoJS.quit();
  Routine ISIcode_test
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    CodeComponent code_14
      Code Type = Both
      End JS Routine:
        ISIRange = linspace(1000, 1500, 500);
        shuffle(ISIRange);
        thisISI = (ISIRange[0] / 1000);
        console.log("thisISI: ", thisISI);
        trials.addData("ISI", thisISI);
        thistype = 'formal';
        trials.addData('type', thistype)
      End Routine:
        # pick the ISI for the next routine
        # this code component is set to 'both' because we need to remove the 'np'
        # at the start of np.linspace (this is a python library JS won't know what to call.

        # make range from a to b in n stepsizes
        ISIRange = np.linspace(1000, 1500, 500)

        # picking from a shuffled array is easier for random selection in JS
        shuffle(ISIRange)
        thisISI = ISIRange[0]/1000 # the first item of the shuffled array

        # show in console for debugging
        print('thisISI: ', thisISI)

        # save this ISI to our output file
        trials.addData('ISI', thisISI)

        # save the type of trials to our output file
        thistype = 'formal'
        trials.addData('type', thistype)
Flow
  LoopInitiator dummy_trial loopType="TrialHandler"
    loopType = random
    nReps = 0
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    Routine dummy_resources
  LoopTerminator dummy_trial
  Routine JS_code
  Routine instruction_1
  Routine instruction_2
  Routine instruction_2_1
  Routine instruction_2_2
  Routine instruction_2_3
  Routine instruction_2_4
  Routine instruction_2_5
  LoopInitiator block loopType="TrialHandler"
    loopType = random
    nReps = 3
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    Routine Instructions_3
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = conditions_mixed.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [{'left_arrow': 'img/left_arrow.png', 'right_arrow': 'img/right_arrow.png', 'empty': 'img/congruent_left_empty.png', 'middle': 'img/congruent_left.png', 'corrAns': 'z', 'condition': 'congruent'},
        {'left_arrow': 'img/left_arrow.png', 'right_arrow': 'img/right_arrow.png', 'empty': 'img/congruent_right_empty.png', 'middle': 'img/congruent_right.png', 'corrAns': 'm', 'condition': 'congruent'},
        {'left_arrow': 'img/left_arrow.png', 'right_arrow': 'img/right_arrow.png', 'empty': 'img/incongruent_right_empty.png', 'middle': 'img/incongruent_right.png', 'corrAns': 'm', 'condition': 'incongruent'},
        {'left_arrow': 'img/left_arrow.png', 'right_arrow': 'img/right_arrow.png', 'empty': 'img/incongruent_left_empty.png', 'middle': 'img/incongruent_left.png', 'corrAns': 'z', 'condition': 'incongruent'}]
      Routine inter_trial_interval
      Routine ISIcode
      Routine fixation
      Routine Cue
      Routine Stim
      Routine Feedback
      Routine UpdateAccuracy
    LoopTerminator trials
    Routine continueStatus
  LoopTerminator block
  Routine Main_Exp_Instructions
  LoopInitiator test_trials loopType="TrialHandler"
    conditionsFile = conditions_test(13+7).xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'blockfile': 'PNblock1.xlsx'},
      {'blockfile': 'PNblock2.xlsx'},
      {'blockfile': 'PNblock3.xlsx'},
      {'blockfile': 'PNblock4.xlsx'},
      {'blockfile': 'PNblock5.xlsx'},
      {'blockfile': 'PNblock6.xlsx'},
      {'blockfile': 'PNblock7.xlsx'}]
    LoopInitiator blockn loopType="TrialHandler"
      conditionsFile = $blockfile
      loopType = sequential
      nReps = 1
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      Routine inter_trial_interval
      Routine ISIcode_test
      Routine fixation
      Routine Cue
      Routine Stim
    LoopTerminator blockn
  LoopTerminator test_trials
  Routine finish
