PsychoPy2experiment version="2023.2.2"
Settings
  Audio lib = pygame
  Data filename = u'data/%s_1_2_2_%s_%s_%s' % (expInfo['主试ID'], expName, expInfo['编号'], expInfo['date'])
  Experiment info = {'编号': '', '主试ID': ''}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['resources/audio/F-a.mp3', 'resources/audio/F-b.mp3', 'resources/audio/F-d.mp3', 'resources/audio/F-d1.mp3', 'resources/audio/F-e.mp3', 'resources/audio/F-g.mp3']
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  color = -1.0000, -1.0000, -1.0000
  expName = DCCS
  keyboardBackend = ioHub
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Routines
  Routine trial
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  Routine JS_code
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    CodeComponent JScode
      Code Type = JS
      Before JS Experiment:
        // for our own functions we need these specified in the global space
        // so these are defined in the "Before experiment" tab
        // linspace (this will be used in place of numpy.linspace for picking ISI)

        function linspace(a,b,n) {
            if(typeof n === "undefined") n = Math.max(Math.round(b-a)+1,1);
            if(n<2) { return n===1?[a]:[]; }
            var i,ret = Array(n);
            n--;
            for(i=n;i>=0;i--) { ret[i] = (i*b+(n-i)*a)/n; }
            return ret;
        }
      Begin JS Experiment:
        // shuffle is push in JS so defining shuffle for our JS experiment code
        shuffle = util.shuffle;
  Routine instruction_1
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    CodeComponent JScode_2
      Code Type = JS
      Before JS Experiment:
        // for our own functions we need these specified in the global space
        // so these are defined in the "Before experiment" tab
        // linspace (this will be used in place of numpy.linspace for picking ISI)

        function linspace(a,b,n) {
            if(typeof n === undefined) n = Math.max(Math.round(b-a)+1,1);
            if(n<2) { return n===1?[a]:[]; }
            var i,ret = Array(n);
            n--;
            for(i=n;i>=0;i--) { ret[i] = (i*b+(n-i)*a)/n; }
            return ret;
        }
      Begin JS Experiment:
        // shuffle is push in JS so defining shuffle for our JS experiment code
        shuffle = util.shuffle;
    TextComponent text_homebase
      font = Heiti SC
      letterHeight = 0.035
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        欢迎您参加本任务。

        在这个任务中，我们将进行“颜色或形状”匹配游戏，

        但首先，让我们先学习一下按键，请把您的左手食指

        放在Z键上，并把右手食指放在M键上。


        按空格键继续。
    KeyboardComponent wecomle_resp
      allowedKeys =  'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    SoundComponent sound_13
      sound = resources/audio/instr_1_audio.wav
      startVal [time (s)] = 0.0
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  Routine ShapeBoatEx
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    TextComponent textBoat
      font = Heiti SC
      letterHeight = 0.03
      pos = (0, 0.36)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        首先是“形状”匹配游戏，在这个环节中，通过左右手按键，
        选择与中心图片形状相同的选项，如果中心图片是“帆船”，
        请通过按键M选择右侧的“帆船”选项。
    ImageComponent stimulus
      image = resources/assets/RedBoat.png
      pos = (0, 0.15)
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent image_2
      image = resources/assets/RedRabbitWhite.png
      pos = (-0.4, -0.21)
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent image_3
      image = resources/assets/BlueBoatWhite.png
      pos = (0.4, -0.21)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
      texture resolution = 512
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    ImageComponent image_12
      image = resources/assets/BlueBoatGreen.png
      pos = (0.4, -0.21)
      size = (0.3, 0.3)
      startVal [time (s)] = 7
      stopVal [duration (s)] = 1
      texture resolution = 512
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    ImageComponent image_13
      image = resources/assets/BlueBoatWhite.png
      pos = (0.4, -0.21)
      size = (0.3, 0.3)
      startVal [time (s)] = 8
      stopVal [duration (s)] = 1.0
      texture resolution = 512
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    ImageComponent image_14
      image = resources/assets/BlueBoatGreen.png
      pos = (0.4, -0.21)
      size = (0.3, 0.3)
      startVal [time (s)] = 9
      texture resolution = 512
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    KeyboardComponent key_resp_8
      allowedKeys = 'm'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_11
      font = Heiti SC
      letterHeight = 0.03
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = 按M键继续
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    SoundComponent sound_14
      sound = resources/audio/instr_2_audio.wav
      startVal [time (s)] = 0.0
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  Routine ShapeRabbitEx
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    TextComponent text
      font = heiti sc
      letterHeight = 0.03
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
      text = 如果中心图片是“兔子”，请通过按键Z选择左侧的“兔子”选项。
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    ImageComponent image
      image = resources/assets/BlueRabbit.png
      pos = (0, 0.15)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent image_10
      image = resources/assets/BlueBoatWhite.png
      pos = (0.4, -0.2)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent image_4
      image = resources/assets/RedRabbitWhite.png
      pos = (-0.4, -0.2)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      texture resolution = 512
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    ImageComponent image_15
      image = resources/assets/RedRabbitGreen.png
      pos = (-0.4, -0.2)
      size = (0.3, 0.3)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
      texture resolution = 512
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    ImageComponent image_16
      image = resources/assets/RedRabbitWhite.png
      pos = (-0.4, -0.2)
      size = (0.3, 0.3)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 1.0
      texture resolution = 512
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    ImageComponent image_17
      image = resources/assets/RedRabbitGreen.png
      pos = (-0.4, -0.2)
      size = (0.3, 0.3)
      startVal [time (s)] = 4
      texture resolution = 512
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    KeyboardComponent key_resp_7
      allowedKeys = 'z'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_10
      font = heiti sc
      letterHeight = 0.03
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = 按Z键继续
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    SoundComponent sound_15
      sound = resources/audio/instr_3_audio.wav
      startVal [time (s)] = 0.0
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  Routine Instructions
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    TextComponent prac_instr
      font = Heiti SC
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        现在请试一试。

        请保持注视屏幕上的“+”注视点。
        试着在保持正确的同时尽可能快地回答。

        如果您回答错误，继续回答下一题即可。
        记得，回答完之后把手指放回Z键和M键上。


        按空格键继续。
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    SoundComponent sound_2
      sound = resources/audio/F11_new.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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  Routine InterTrial_Intreval
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    ImageComponent image_6
      image = resources/assets/RedRabbitWhite.png
      pos = (-0.4, -0.21)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .8
      texture resolution = 512
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    ImageComponent image_7
      image = resources/assets/BlueBoatWhite.png
      pos = (0.4, -0.21)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .8
      texture resolution = 512
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  Routine ISIcode
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    CodeComponent pickISI
      Code Type = Both
      End JS Routine:
        ISIRange = linspace(1000, 1500, 500);
        shuffle(ISIRange);
        thisISI = (ISIRange[0] / 1000);
        console.log("thisISI: ", thisISI);
        trials.addData("ISI", thisISI);
      End Routine:
        # pick the ISI for the next routine
        # this code component is set to 'both' because we need to remove the 'np'
        # at the start of np.linspace (this is a python library JS won't know what to call.

        # make range from a to b in n stepsizes
        ISIRange = np.linspace(1000, 1500, 500)

        # picking from a shuffled array is easier for random selection in JS
        shuffle(ISIRange)
        thisISI = ISIRange[0]/1000 # the first item of the shuffled array

        # show in console for debugging
        print('thisISI: ', thisISI)

        # save this ISI to our output file
        trials.addData('ISI', thisISI)
  Routine Fixation
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    TextComponent fix_image_8
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $thisISI
      text = +
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    ImageComponent image_9
      image = resources/assets/RedRabbitWhite.png
      pos = (-0.4, -0.21)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $thisISI
      texture resolution = 512
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    ImageComponent image_37
      image = resources/assets/BlueBoatWhite.png
      pos = (0.4, -0.21)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $thisISI
      texture resolution = 512
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  Routine CueShape
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    TextComponent text_14
      font = heiti sc
      letterHeight = 0.04
      pos = (0, .1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = 形状
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    ImageComponent image_38
      image = resources/assets/RedRabbitWhite.png
      pos = (-0.4, -0.21)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      texture resolution = 512
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    ImageComponent image_39
      image = resources/assets/BlueBoatWhite.png
      pos = (0.4, -0.21)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      texture resolution = 512
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  Routine Stim
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    ImageComponent image_40
      image [set every repeat] = $middle
      opacity [set every repeat] = 1
      ori [set every repeat] = 0
      pos [set every repeat] = (0, 0.15)
      size [set every repeat] = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      texture resolution = 512
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    ImageComponent image_41
      image [set every repeat] = $leftImg
      opacity [set every repeat] = 1
      ori [set every repeat] = 0
      pos [set every repeat] = (-0.4, -0.21)
      size [set every repeat] = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      texture resolution = 512
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    ImageComponent image_42
      image [set every repeat] = $rightImg
      opacity [set every repeat] = 1
      ori [set every repeat] = 0
      pos [set every repeat] = (0.4, -0.21)
      size [set every repeat] = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      texture resolution = 512
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    KeyboardComponent key_resp_3
      allowedKeys [set every repeat] = 'z','m'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      storeCorrect = True
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  Routine Feedback
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    CodeComponent code_2
      Code Type = Both
      Begin JS Routine:
        if (key_resp_3.keys) {
            if ((key_resp_3.keys[0] === "z")) {
                if (key_resp_3.corr) {
                    left = "resources/assets/RedRabbitGreen.png";
                    right = "resources/assets/BlueBoatWhite.png";
                    audio = "resources/audio/F-b.mp3";
                } else {
                    left = "resources/assets/RedRabbitRed.png";
                    right = "resources/assets/BlueBoatWhite.png";
                    audio = "resources/audio/F-a.mp3";
                }
            } else {
                if ((key_resp_3.keys[0] === "m")) {
                    if (key_resp_3.corr) {
                        right = "resources/assets/BlueBoatGreen.png";
                        left = "resources/assets/RedRabbitWhite.png";
                        audio = "resources/audio/F-b.mp3";
                    } else {
                        left = "resources/assets/RedRabbitWhite.png";
                        right = "resources/assets/BlueBoatRed.png";
                        audio = "resources/audio/F-a.mp3";
                    }
                }
            }
        } else {
            if ((corrAns === "m")) {
                right = "resources/assets/BlueBoatRed.png";
                left = "resources/assets/RedRabbitWhite.png";
                audio = "resources/audio/F-a.mp3";
            } else {
                left = "resources/assets/RedRabbitRed.png";
                right = "resources/assets/BlueBoatWhite.png";
                audio = "resources/audio/F-a.mp3";
            }
        }
      Begin Routine:
        if key_resp_3.keys: # if a keypress has been made
            if key_resp_3.keys[0] =='z':
                if key_resp_3.corr:
                    left = 'resources/assets/RedRabbitGreen.png'
                    right = 'resources/assets/BlueBoatWhite.png'
                    audio = 'resources/audio/F-b.mp3'
                else:
                    left = 'resources/assets/RedRabbitRed.png'
                    right = 'resources/assets/BlueBoatWhite.png'
                    audio = 'resources/audio/F-a.mp3'
            elif key_resp_3.keys[0] =='m':
                if key_resp_3.corr:
                    right = 'resources/assets/BlueBoatGreen.png'
                    left = 'resources/assets/RedRabbitWhite.png'
                    audio = 'resources/audio/F-b.mp3'
                else:
                    left = 'resources/assets/RedRabbitWhite.png'
                    right = 'resources/assets/BlueBoatRed.png'
                    audio = 'resources/audio/F-a.mp3'
        else: # thi is classed as an incorrect response
            if corrAns == 'm':
                right = 'resources/assets/BlueBoatRed.png'
                left = 'resources/assets/RedRabbitWhite.png'
                audio = 'resources/audio/F-a.mp3'
            else:
                left = 'resources/assets/RedRabbitRed.png'
                right = 'resources/assets/BlueBoatWhite.png'
                audio = 'resources/audio/F-a.mp3'
      End JS Routine:
        sound_9 = new sound.Sound({
            win: psychoJS.window,
            value: 'A',
            secs: (- 1),
            });
        sound_9.setVolume(1.0)
    ImageComponent image_43
      image [set every repeat] = $middle
      opacity [set every repeat] = 1
      ori [set every repeat] = 0
      pos [set every repeat] = (0, 0.15)
      size [set every repeat] = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      texture resolution = 512
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    ImageComponent image_44
      image [set every repeat] = $left
      opacity [set every repeat] = 1
      ori [set every repeat] = 0
      pos [set every repeat] = (-0.4, -0.21)
      size [set every repeat] = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      texture resolution = 512
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    ImageComponent image_45
      image [set every repeat] = $right
      opacity [set every repeat] = 1
      ori [set every repeat] = 0
      pos [set every repeat] = (0.4, -0.21)
      size [set every repeat] = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      texture resolution = 512
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    SoundComponent sound_9
      sound [set every repeat] = $audio
      startVal [time (s)] = 0
      stopVal [duration (s)] = 4
      volume [set every repeat] = 1
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  Routine UpdateAccuracy
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        counterOne = 0
        counterTwo = 0
      Begin Routine:
        if key_resp_3.keys:
            if key_resp_3.corr:
                counterOne +=1
            else:
                counterTwo +=1
        else:
            key_resp_3.corr = 0
            counterTwo +=1
  Routine continueStatus
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    CodeComponent code_11
      Code Type = Auto->JS
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      Begin Experiment:
        isForward = 0
      Begin Routine:
        if counterOne >= 3:
            outPut = '做得好'+'\n'+'\n'+'让我们开始下一部分的练习'+'\n'+'\n'+'按空格键继续。'
            audio = 'resources/audio/F-d1.mp3'
            block.finished = True
        if counterTwo>1:
            outPut = '很遗憾，这次练习失败了，让我们再试一次。'+'\n'+'\n'+'\n'+'按空格键继续。'
            audio = 'resources/audio/F-e.mp3'
            isForward += 1
            block.finished = False
            counterOne = 0
            counterTwo = 0
            if isForward == 3:
                outPut = '很遗憾，您没能通过练习环节。'+'\n'+'\n'+'任务结束，感谢您的参与。'
                audio = 'resources/audio/F-g.mp3'
                block.finished = True
    TextComponent text_24
      font = heiti sc
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every frame] = $outPut
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    CodeComponent code_12
      Code Type = JS
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      End JS Routine:
        if ((isForward === 3)) {
            psychoJS.quit();
        }
    KeyboardComponent key_resp_18
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    SoundComponent sound_10
      saveStartStop = False
      sound [set every repeat] = $audio
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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  Routine ColorRedEx
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    TextComponent text_7
      font = heiti sc
      letterHeight = 0.03
      pos = (0, 0.36)
      startVal [time (s)] = 0.0
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      text:
        另一部分是“颜色”匹配游戏，在这个环节中，通过左右手按键，
        选择与中心图片颜色相同的选项，如果中心图片是“红色”，
        请通过按键Z选择下方左侧的“红色”选项。
    ImageComponent image_18
      image = resources/assets/RedBoat.png
      pos = (0, 0.15)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent image_20
      image = resources/assets/BlueBoatWhite.png
      pos = (0.4, -0.2)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent image_19
      image = resources/assets/RedRabbitWhite.png
      pos = (-0.4, -0.2)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
      texture resolution = 512
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    ImageComponent image_21
      image = resources/assets/RedRabbitRed.png
      pos = (-0.4, -0.2)
      size = (0.3, 0.3)
      startVal [time (s)] = 7
      stopVal [duration (s)] = 1.0
      texture resolution = 512
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    ImageComponent image_22
      image = resources/assets/RedRabbitWhite.png
      pos = (-0.4, -0.2)
      size = (0.3, 0.3)
      startVal [time (s)] = 8
      stopVal [duration (s)] = 1.0
      texture resolution = 512
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    ImageComponent image_23
      image = resources/assets/RedRabbitRed.png
      pos = (-0.4, -0.2)
      size = (0.3, 0.3)
      startVal [time (s)] = 9
      texture resolution = 512
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    KeyboardComponent key_resp_9
      allowedKeys = 'z'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_12
      font = heiti sc
      letterHeight = 0.03
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = 按Z键继续
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    SoundComponent sound_16
      sound = resources/audio/instr_4_audio.wav
      startVal [time (s)] = 0.0
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  Routine ColorBlueEx
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    TextComponent text_8
      font = heiti sc
      letterHeight = 0.03
      pos = (0, 0.41)
      startVal [time (s)] = 0.0
      text = 如果中心图片是“蓝色”，请通过按键M选择下方右侧的“蓝色”选项。
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    ImageComponent image_24
      image = resources/assets/BlueRabbit.png
      pos = (0, 0.2)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent image_25
      image = resources/assets/RedRabbitWhite.png
      pos = (-0.4, -0.2)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent image_26
      image = resources/assets/BlueBoatWhite.png
      pos = (0.4, -0.2)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      texture resolution = 512
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    ImageComponent image_27
      image = resources/assets/BlueBoatRed.png
      pos = (0.4, -0.2)
      size = (0.3, 0.3)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
      texture resolution = 512
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    ImageComponent image_28
      image = resources/assets/BlueBoatWhite.png
      pos = (0.4, -0.2)
      size = (0.3, 0.3)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 1.0
      texture resolution = 512
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    ImageComponent image_29
      image = resources/assets/BlueBoatRed.png
      pos = (0.4, -0.2)
      size = (0.3, 0.3)
      startVal [time (s)] = 4
      texture resolution = 512
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    KeyboardComponent key_resp_10
      allowedKeys = 'm'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_13
      font = heiti sc
      letterHeight = 0.03
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = 按M键继续
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    SoundComponent sound_17
      sound = resources/audio/instr_5_audio.wav
      startVal [time (s)] = 0.0
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  Routine CueColor
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    TextComponent text_16
      font = heiti sc
      letterHeight = 0.04
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = 颜色
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    ImageComponent image_46
      image = resources/assets/RedRabbitWhite.png
      pos = (-0.4, -0.21)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      texture resolution = 512
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    ImageComponent image_47
      image = resources/assets/BlueBoatWhite.png
      pos = (0.4, -0.21)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      texture resolution = 512
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  Routine Stim2
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    ImageComponent image_58
      image [set every repeat] = $middle
      opacity [set every repeat] = 1
      ori [set every repeat] = 0
      pos [set every repeat] = (0, 0.15)
      size [set every repeat] = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      texture resolution = 512
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    ImageComponent image_59
      image [set every repeat] = $leftimg
      opacity [set every repeat] = 1
      ori [set every repeat] = 0
      pos [set every repeat] = (-0.4, -0.21)
      size [set every repeat] = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      texture resolution = 512
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    ImageComponent image_60
      image [set every repeat] = $rightimg
      opacity [set every repeat] = 1
      ori [set every repeat] = 0
      pos [set every repeat] = (0.4, -0.21)
      size [set every repeat] = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      texture resolution = 512
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    KeyboardComponent key_resp_12
      allowedKeys [set every repeat] = 'z','m'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      storeCorrect = True
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  Routine Feedback2
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    CodeComponent code_6
      Code Type = Both
      Begin JS Routine:
        if (key_resp_12.keys) {
            if ((key_resp_12.keys[0] === "z")) {
                if (key_resp_12.corr) {
                    left = "resources/assets/RedRabbitGreen.png";
                    right = "resources/assets/BlueBoatWhite.png";
                    audio1 = "resources/audio/F-b.mp3";
                } else {
                    left = "resources/assets/RedRabbitRed.png";
                    right = "resources/assets/BlueBoatWhite.png";
                    audio1 = "resources/audio/F-a.mp3";
                }
            } else {
                if ((key_resp_12.keys[0] === "m")) {
                    if (key_resp_12.corr) {
                        right = "resources/assets/BlueBoatGreen.png";
                        left = "resources/assets/RedRabbitWhite.png";
                        audio1 = "resources/audio/F-b.mp3";
                    } else {
                        left = "resources/assets/RedRabbitRed.png";
                        right = "resources/assets/BlueBoatWhite.png";
                        audio1 = "resources/audio/F-a.mp3";
                    }
                }
            }
        } else {
            if ((corrAns === "m")) {
                right = "resources/assets/BlueBoatRed.png";
                left = "resources/assets/RedRabbitWhite.png";
                audio1 = "resources/audio/F-a.mp3";
            } else {
                left = "resources/assets/RedRabbitRed.png";
                right = "resources/assets/BlueBoatWhite.png";
                audio1 = "resources/audio/F-a.mp3";
            }
        }
      Begin Routine:
        if key_resp_12.keys:
            if key_resp_12.keys[0] =='z':
                if key_resp_12.corr:
                    left = 'resources/assets/RedRabbitGreen.png'
                    right = 'resources/assets/BlueBoatWhite.png'
                    audio1 = 'resources/audio/F-b.mp3'
                else:
                    left = 'resources/assets/RedRabbitRed.png'
                    right = 'resources/assets/BlueBoatWhite.png'
                    audio1 = 'resources/audio/F-a.mp3'

            elif key_resp_12.keys[0] =='m':
                if key_resp_12.corr:
                    right = 'resources/assets/BlueBoatGreen.png'
                    left = 'resources/assets/RedRabbitWhite.png'
                    audio1 = 'resources/audio/F-b.mp3'
                else:
                    left = 'resources/assets/RedRabbitRed.png'
                    right = 'resources/assets/BlueBoatWhite.png'
                    audio1 = 'resources/audio/F-a.mp3'
        else:
            if corrAns == 'm':
                    right = 'resources/assets/BlueBoatRed.png'
                    left = 'resources/assets/RedRabbitWhite.png'
                    audio1 = 'resources/audio/F-a.mp3'
            else:
                    left = 'resources/assets/RedRabbitRed.png'
                    right = 'resources/assets/BlueBoatWhite.png'
                    audio1 = 'resources/audio/F-a.mp3'
      End JS Routine:
        sound_1 = new sound.Sound({
            win: psychoJS.window,
            value: 'A',
            secs: (- 1),
            });
        sound_1.setVolume(1.0)
    ImageComponent image_61
      image [set every repeat] = $middle
      opacity [set every repeat] = 1
      ori [set every repeat] = 0
      pos [set every repeat] = (0, 0.15)
      size [set every repeat] = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      texture resolution = 512
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    ImageComponent image_62
      image [set every repeat] = $left
      opacity [set every repeat] = 1
      ori [set every repeat] = 0
      pos [set every repeat] = (-0.4, -0.21)
      size [set every repeat] = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      texture resolution = 512
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    ImageComponent image_63
      image [set every repeat] = $right
      opacity [set every repeat] = 1
      ori [set every repeat] = 0
      pos [set every repeat] = (0.4, -0.21)
      size [set every repeat] = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      texture resolution = 512
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    SoundComponent sound_1
      sound [set every repeat] = $audio1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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  Routine UpdateAccuracy2
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    CodeComponent code_7
      Code Type = Auto->JS
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      Begin Experiment:
        counterOne = 0
        counterTwo = 0
      Begin Routine:
        if key_resp_12.keys:
            if key_resp_12.corr:
                counterOne +=1
            else:
                counterTwo +=1
        else:
            key_resp_12.corr = 0
            counterTwo +=1
  Routine ContStatus2
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Experiment:
        isForward = 0
      Begin Routine:
        if counterOne >= 3:
            outPut = '做得好，练习结束了。'+'\n'+'\n'+'让我们开始正式实验吧!'+'\n'+'\n'+'按空格键继续。'
            audio = 'resources/audio/F-d.mp3'
            block2.finished = True
        if counterTwo>1:
            outPut = '很遗憾，这次练习失败了，让我们再试一次。'+'\n'+'\n'+'\n'+'按空格键继续。'
            audio = 'resources/audio/F-e.mp3'
            isForward +=1
            block2.finished = False
            counterOne = 0
            counterTwo = 0
            if isForward == 3:
                outPut = '很遗憾，您没能通过练习环节。'+'\n'+'\n'+'任务结束，感谢您的参与。'
                audio = 'resources/audio/F-g.mp3'
                block.finished = True
    TextComponent text_17
      font = heiti sc
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text [set every frame] = $outPut
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    CodeComponent code_8
      Code Type = JS
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      End JS Routine:
        if ((isForward === 3)) {
            psychoJS.quit();
        }
    KeyboardComponent key_resp_16
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    SoundComponent sound_11
      saveStartStop = False
      sound [set every repeat] = $audio
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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  Routine CombInstructions
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    TextComponent MainTaskPrompt
      font = heiti sc
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        现在，我们将两个环节合并。
        请记住，如果提示词是“形状”，请选择和中心图形形状一样的选项；
        如果提示词是“颜色”，请选择和中心图形颜色一样的选项；

        还有，请保持左手食指在Z键上，右手食指在M键上。


        按空格键继续。
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    SoundComponent sound_18
      sound = resources/audio/combin_instr.wav
      startVal [time (s)] = 0.0
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  Routine countReset
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    CodeComponent resetLoopCounters
      Code Type = Auto->JS
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      Begin Routine:
        colorLoopCounter = 0
        shapeLoopCounter = 0
  Routine ITI_Comb
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    ImageComponent image_65
      image = resources/assets/BlueBallWhite.png
      pos = (-0.4, -0.21)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .8
      texture resolution = 512
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    ImageComponent image_66
      image = resources/assets/YellowTruckWhite.png
      pos = (0.4, -0.21)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .8
      texture resolution = 512
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  Routine FixationComb_2
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    TextComponent fix_image_67
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $thisISI
      text = +
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    ImageComponent image_68
      image = resources/assets/BlueBallWhite.png
      pos = (-0.4, -0.21)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $thisISI
      texture resolution = 512
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    ImageComponent image_69
      image = resources/assets/YellowTruckWhite.png
      pos = (0.4, -0.21)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $thisISI
      texture resolution = 512
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  Routine cueComb_2
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    ImageComponent image_70
      image = resources/assets/BlueBallWhite.png
      pos = (-0.4, -0.21)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      texture resolution = 512
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    ImageComponent image_71
      image = resources/assets/YellowTruckWhite.png
      pos = (0.4, -0.21)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      texture resolution = 512
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    TextComponent text_20
      font = heiti sc
      letterHeight = 0.04
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = 形状
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  Routine PracticeComb_2
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    ImageComponent image_72
      image [set every repeat] = $middleStim
      pos = (0, 0.15)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      texture resolution = 512
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    ImageComponent image_73
      image = resources/assets/BlueBallWhite.png
      pos = (-0.4, -0.21)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      texture resolution = 512
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    ImageComponent image_74
      image = resources/assets/YellowTruckWhite.png
      pos = (0.4, -0.21)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      texture resolution = 512
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    KeyboardComponent key_resp_13
      allowedKeys = 'z','m'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      storeCorrect = True
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  Routine stopColorLoop
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    CodeComponent code_10
      Code Type = Auto->JS
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      End Routine:
        if colorLoopCounter==numFreq:
            colorLoop.finished=True
            shapeLoopCounter = 3-numFreq
        colorLoopCounter +=1
  Routine stopShapeLoop
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    CodeComponent code_13
      Code Type = Auto->JS
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      End Routine:
        if shapeLoopCounter==0:
            shapeLoop.finished=True
        shapeLoopCounter -=1
  Routine ThankYou
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    TextComponent text_19
      font = heiti sc
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = 任务已经全部完成了，感谢您的参与！
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  Routine Instructions2
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    TextComponent instr
      font = Heiti SC
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        准备好，让我们开始正式实验。

        请保持注视屏幕上的“+”号注视点。
        试着在保持正确的同时尽可能快地回答。

        如果您回答错误，继续回答下一题即可。
        记得，回答完之后把手指放回Z键和M键上。


        按空格键继续。
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    SoundComponent sound_3
      saveStartStop = False
      sound = resources/audio/F12_new.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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  Routine cueComb_3
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    ImageComponent image_75
      image = resources/assets/BlueBallWhite.png
      pos = (-0.4, -0.21)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      texture resolution = 512
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    ImageComponent image_76
      image = resources/assets/YellowTruckWhite.png
      pos = (0.4, -0.21)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      texture resolution = 512
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    TextComponent text_21
      font = heiti sc
      letterHeight = 0.04
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = 颜色
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  Routine dummy
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    SoundComponent sound_4
      sound = resources/audio/F-a.mp3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    SoundComponent sound_5
      sound = resources/audio/F-d.mp3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    SoundComponent sound_6
      sound = resources/audio/F-b.mp3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    SoundComponent sound_7
      sound = resources/audio/F-d1.mp3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    SoundComponent sound_8
      sound = resources/audio/F-e.mp3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    SoundComponent sound_12
      sound = resources/audio/F-g.mp3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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Flow
  LoopInitiator trials_3 loopType="TrialHandler"
    loopType = random
    nReps = 0
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    Routine dummy
  LoopTerminator trials_3
  Routine instruction_1
  Routine ShapeBoatEx
  Routine ShapeRabbitEx
  LoopInitiator block loopType="TrialHandler"
    loopType = random
    nReps = 3
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    Routine Instructions
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = resources/ShapePractTrial.csv
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('leftImg', 'resources/assets/RedRabbitWhite.png'), ('rightImg', 'resources/assets/BlueBoatWhite.png'), ('middle', 'resources/assets/RedBoat.png'), ('corrAns', 'm')]),
        OrderedDict([('leftImg', 'resources/assets/RedRabbitWhite.png'), ('rightImg', 'resources/assets/BlueBoatWhite.png'), ('middle', 'resources/assets/BlueBoat.png'), ('corrAns', 'm')]),
        OrderedDict([('leftImg', 'resources/assets/RedRabbitWhite.png'), ('rightImg', 'resources/assets/BlueBoatWhite.png'), ('middle', 'resources/assets/RedRabbit.png'), ('corrAns', 'z')]),
        OrderedDict([('leftImg', 'resources/assets/RedRabbitWhite.png'), ('rightImg', 'resources/assets/BlueBoatWhite.png'), ('middle', 'resources/assets/BlueRabbit.png'), ('corrAns', 'z')])]
      Routine InterTrial_Intreval
      Routine ISIcode
      Routine Fixation
      Routine CueShape
      Routine Stim
      Routine Feedback
      Routine UpdateAccuracy
    LoopTerminator trials
    Routine continueStatus
  LoopTerminator block
  Routine ColorRedEx
  Routine ColorBlueEx
  LoopInitiator block2 loopType="TrialHandler"
    loopType = random
    nReps = 3
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    Routine Instructions
    LoopInitiator trials_2 loopType="TrialHandler"
      conditionsFile = resources/colorPract.csv
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('leftimg', 'resources/assets/RedRabbitWhite.png'), ('rightimg', 'resources/assets/BlueBoatWhite.png'), ('middle', 'resources/assets/RedBoat.png'), ('corrAns', 'z')]),
        OrderedDict([('leftimg', 'resources/assets/RedRabbitWhite.png'), ('rightimg', 'resources/assets/BlueBoatWhite.png'), ('middle', 'resources/assets/BlueBoat.png'), ('corrAns', 'm')]),
        OrderedDict([('leftimg', 'resources/assets/RedRabbitWhite.png'), ('rightimg', 'resources/assets/BlueBoatWhite.png'), ('middle', 'resources/assets/RedRabbit.png'), ('corrAns', 'z')]),
        OrderedDict([('leftimg', 'resources/assets/RedRabbitWhite.png'), ('rightimg', 'resources/assets/BlueBoatWhite.png'), ('middle', 'resources/assets/BlueRabbit.png'), ('corrAns', 'm')])]
      Routine InterTrial_Intreval
      Routine ISIcode
      Routine Fixation
      Routine CueColor
      Routine Stim2
      Routine Feedback2
      Routine UpdateAccuracy2
    LoopTerminator trials_2
    Routine ContStatus2
  LoopTerminator block2
  Routine CombInstructions
  Routine Instructions2
  LoopInitiator LoopSelectFreqNumber loopType="TrialHandler"
    conditionsFile = resources/selectFreqNum.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('numFreq', 1)]),
      OrderedDict([('numFreq', 2)]),
      OrderedDict([('numFreq', 3)])]
    Routine countReset
    LoopInitiator colorLoop loopType="TrialHandler"
      conditionsFile = resources/color.csv
      loopType = fullRandom
      nReps = 1
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      conditions:
        [OrderedDict([('left', 'resources/assets/BlueBallWhite.png'), ('right', 'resources/assets/YellowTruckWhite.png'), ('middleStim', 'resources/assets/BlueBall.png'), ('cue', 'COLOR'), ('corrAns', 'z')]),
        OrderedDict([('left', 'resources/assets/BlueBallWhite.png'), ('right', 'resources/assets/YellowTruckWhite.png'), ('middleStim', 'resources/assets/YellowBall.png'), ('cue', 'COLOR'), ('corrAns', 'm')]),
        OrderedDict([('left', 'resources/assets/BlueBallWhite.png'), ('right', 'resources/assets/YellowTruckWhite.png'), ('middleStim', 'resources/assets/BlueTruck.png'), ('cue', 'COLOR'), ('corrAns', 'z')]),
        OrderedDict([('left', 'resources/assets/BlueBallWhite.png'), ('right', 'resources/assets/YellowTruckWhite.png'), ('middleStim', 'resources/assets/YellowTruck.png'), ('cue', 'COLOR'), ('corrAns', 'm')]),
        OrderedDict([('left', 'resources/assets/BlueBallWhite.png'), ('right', 'resources/assets/YellowTruckWhite.png'), ('middleStim', 'resources/assets/BlueBall.png'), ('cue', 'COLOR'), ('corrAns', 'z')]),
        OrderedDict([('left', 'resources/assets/BlueBallWhite.png'), ('right', 'resources/assets/YellowTruckWhite.png'), ('middleStim', 'resources/assets/YellowBall.png'), ('cue', 'COLOR'), ('corrAns', 'm')]),
        OrderedDict([('left', 'resources/assets/BlueBallWhite.png'), ('right', 'resources/assets/YellowTruckWhite.png'), ('middleStim', 'resources/assets/BlueTruck.png'), ('cue', 'COLOR'), ('corrAns', 'z')])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
      Routine ITI_Comb
      Routine ISIcode
      Routine FixationComb_2
      Routine cueComb_3
      Routine PracticeComb_2
      Routine stopColorLoop
    LoopTerminator colorLoop
    LoopInitiator shapeLoop loopType="TrialHandler"
      conditionsFile = resources/shape.csv
      loopType = fullRandom
      nReps = 1
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      conditions:
        [OrderedDict([('left', 'resources/assets/BlueBallWhite.png'), ('right', 'resources/assets/YellowTruckWhite.png'), ('middleStim', 'resources/assets/BlueBall.png'), ('cue', 'SHAPE'), ('corrAns', 'z')]),
        OrderedDict([('left', 'resources/assets/BlueBallWhite.png'), ('right', 'resources/assets/YellowTruckWhite.png'), ('middleStim', 'resources/assets/YellowBall.png'), ('cue', 'SHAPE'), ('corrAns', 'z')]),
        OrderedDict([('left', 'resources/assets/BlueBallWhite.png'), ('right', 'resources/assets/YellowTruckWhite.png'), ('middleStim', 'resources/assets/BlueTruck.png'), ('cue', 'SHAPE'), ('corrAns', 'm')]),
        OrderedDict([('left', 'resources/assets/BlueBallWhite.png'), ('right', 'resources/assets/YellowTruckWhite.png'), ('middleStim', 'resources/assets/YellowTruck.png'), ('cue', 'SHAPE'), ('corrAns', 'm')]),
        OrderedDict([('left', 'resources/assets/BlueBallWhite.png'), ('right', 'resources/assets/YellowTruckWhite.png'), ('middleStim', 'resources/assets/BlueBall.png'), ('cue', 'SHAPE'), ('corrAns', 'z')]),
        OrderedDict([('left', 'resources/assets/BlueBallWhite.png'), ('right', 'resources/assets/YellowTruckWhite.png'), ('middleStim', 'resources/assets/YellowBall.png'), ('cue', 'SHAPE'), ('corrAns', 'z')]),
        OrderedDict([('left', 'resources/assets/BlueBallWhite.png'), ('right', 'resources/assets/YellowTruckWhite.png'), ('middleStim', 'resources/assets/BlueTruck.png'), ('cue', 'SHAPE'), ('corrAns', 'm')])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
      Routine ITI_Comb
      Routine ISIcode
      Routine FixationComb_2
      Routine cueComb_2
      Routine PracticeComb_2
      Routine stopShapeLoop
    LoopTerminator shapeLoop
  LoopTerminator LoopSelectFreqNumber
  Routine ThankYou
