PsychoPy2experiment version="2023.2.2"
Settings
  Audio lib = pygame
  Data filename = u'data/%s_1_3_1_%s_%s_%s' % (expInfo['主试ID'], expName, expInfo['编号'], expInfo['date'])
  Experiment info = {'编号': '', '主试ID': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  color = -1.0000, -1.0000, -1.0000
  expName = SpeechFluency
  keyboardBackend = ioHub
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Routines
  Routine Intro
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    TextComponent exp_name
      font = Heiti SC
      letterHeight = 0.07
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 语音流畅性任务
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    TextComponent intro1
      font = Heiti SC
      letterHeight = 0.05
      pos = (0, -0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        欢迎您参加实验，本实验需要您口述您的答案，
        所以，请务必确保您所在的环境安静无干扰。




        请按空格键继续
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    SoundComponent sound_1
      sound = audio/instr_1.wav
      startVal [time (s)] = 0.0
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  Routine mic
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    MicrophoneComponent mic_yi
      channels = auto
      device = default
      maxSize = 24000
      outputType = default
      sampleRate = DVD Audio (48kHz)
      speakTimes = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      transcribe = False
      transcribeBackend = Google
      transcribeLang = en-US
      transcribeWhisperModel = base
      trimSilent = False
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    CodeComponent code
      Code Type = JS
      Before JS Experiment:
        /* BEGIN CUSTOM CODE */
        ;(async () => {
          // Ask for pemission to use the mic
          const stream = await navigator.mediaDevices.getUserMedia({ audio: true });
        })();
        /* END */
    CodeComponent code_2
      Code Type = Both
      Begin JS Routine:
        msg = "";
      Begin Routine:
        msg=""
      Each Frame:
        remaining = 60-t
        msg = "剩余时间：\n%i" %remaining
      Each JS Frame:
        remaining = (60 - t);
        msg = `  剩余时间：
        ${remaining.toFixed(0)}`
        ;
    TextComponent text_3
      font = Heiti SC
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      text [set every frame] = $msg
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  Routine ready1
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    TextComponent text
      font = Heiti SC
      letterHeight = 0.05
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        第一题
        请您尽可能快、尽可能多地说出
        您所知道的以＂yi＂音开头的词
        （四个声调均可以）。
        时间是１分钟，准备好了按【空格键】马上开始。
    TextComponent text_4
      font = Heiti SC
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        倒计时：
        60s
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    SoundComponent sound_2
      sound = audio/instr_2.wav
      startVal [time (s)] = 0.0
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  Routine ready2
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    TextComponent text_2
      font = Heiti SC
      letterHeight = 0.05
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        第二题
        请您尽可能快、尽可能多地说出
        您所知道的以＂fa＂音开头的词
        (四个声调均可以）。
        时间是１分钟，准备好了按【空格键】马上开始。
    TextComponent text_5
      font = Heiti SC
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        倒计时
        60s
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    SoundComponent sound_3
      sound = audio/instr_3.wav
      startVal [time (s)] = 0.0
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  Routine mic2
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    MicrophoneComponent mic_fa
      channels = auto
      device = default
      maxSize = 24000
      outputType = default
      sampleRate = DVD Audio (48kHz)
      speakTimes = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      transcribe = False
      transcribeBackend = Google
      transcribeLang = en-US
      transcribeWhisperModel = base
      trimSilent = False
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    CodeComponent code_4
      Code Type = Both
      Begin JS Routine:
        msg = "";
      Begin Routine:
        msg=""
      Each Frame:
        remaining = 60-t
        msg = "剩余时间：\n%i" %remaining
      Each JS Frame:
        remaining = (60 - t);
        msg = `  剩余时间：
        ${remaining.toFixed(0)}`
        ;
    TextComponent text_6
      font = Heiti SC
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      text [set every frame] = $msg
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  Routine end
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    TextComponent text_7
      font = Heiti SC
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = 实验结束了，感谢您的参与！
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  Routine interval
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    TextComponent interv
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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Flow
  Routine Intro
  Routine ready1
  Routine mic
  Routine interval
  Routine ready2
  Routine mic2
  Routine end
