PsychoPy2experiment version="2023.2.2"
Settings
  Audio lib = ptb
  Data filename = u'data/1_4_1_%s_%s_%s' % (expName, expInfo['编号'], expInfo['date'])
  Experiment info = {'编号': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = PatternComparisonTask
  keyboardBackend = ioHub
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Routines
  Routine Instructions
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    TextComponent instructions
      font = STSong
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        在这项任务中，
        您需要判断所呈现的图片是相同还是不同。
        将同时呈现两个图片。
        如果图片相同，请按左箭头键；
        如果图片不同，请按右箭头键。


        按空格键继续。
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Trial
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    TextComponent fixation
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    ImageComponent first_stimulus
      image [set every repeat] = $picture1
      pos = (-0.3, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 1
      units = height
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    ImageComponent second_stimulus
      image [set every repeat] = $picture2
      pos = (0.3, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 1
      units = height
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    TextComponent keys_text
      font = STSong
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 1
      text = <-相同       不同->
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    KeyboardComponent response
      allowedKeys = 'left','right'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 1
      storeCorrect = True
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  Routine End
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    TextComponent thank_you
      font = STSong
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        实验结束。

        感谢您的参与！
  Routine Feedback
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    CodeComponent feedback_code
      Code Type = Py
      Begin Experiment:
        msg=''
      Begin Routine:
        if response.corr:
          msg="正确! RT=%.2f s" %(response.rt)
        else:
          msg="错误"
    TextComponent feedback_text
      font = STSong
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg
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  Routine Instructions_2
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    TextComponent instructions_2
      font = STSong
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        现在，请试一试。

        请保持注视屏幕上的“+”注视点，
        并在看到图片后立即做出反应，
        试着在保证正确的同时尽可能快地回答。
        我们将提供反馈（包括反应时间）。

        如果您回答错误，继续回答下一题即可。
        记得，在整个实验过程中将手指放在答题键上。


        按空格键开始练习。
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine prac_Trial
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    TextComponent prac_fixation
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    ImageComponent prac_first_stimulus
      image [set every repeat] = $prac_picture1
      pos = (-0.3, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 1
      units = height
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    ImageComponent prac_second_stimulus
      image [set every repeat] = $prac_picture2
      pos = (0.3, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 1
      units = height
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    TextComponent prac_keys_text
      font = STSong
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 1
      text = <-相同       不同->
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    KeyboardComponent prac_response
      allowedKeys = 'left','right'
      correctAns = $prac_corrAns
      forceEndRoutine = True
      startVal [time (s)] = 1
      storeCorrect = True
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  Routine prac_Feedback
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    CodeComponent prac_feedback_code
      Code Type = Py
      Begin Experiment:
        msg=''
      Begin Routine:
        if prac_response.corr:
          msg="正确! RT=%.2f s" %(prac_response.rt)
        else:
          msg="错误"
    TextComponent prac_feedback_text
      font = STSong
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg
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  Routine Instructions_3
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    TextComponent instructions_3
      font = STSong
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        练习结束。
        下面进入正式实验。


        请按空格键开始。
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Instructions
  Routine Instructions_2
  LoopInitiator prac_trials loopType="TrialHandler"
    conditionsFile = prac_conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'prac_trial': 'same', 'prac_picture1': 'images/same/same5.jpg', 'prac_picture2': 'images/same/same5.jpg', 'prac_corrAns': 'left'},
      {'prac_trial': 'same', 'prac_picture1': 'images/same/same6.jpg', 'prac_picture2': 'images/same/same6.jpg', 'prac_corrAns': 'left'},
      {'prac_trial': 'different', 'prac_picture1': 'images/different/diff7.jpg', 'prac_picture2': 'images/different/diff8.jpg', 'prac_corrAns': 'right'},
      {'prac_trial': 'different', 'prac_picture1': 'images/different/diff9.jpg', 'prac_picture2': 'images/different/diff10.jpg', 'prac_corrAns': 'right'}]
    Routine prac_Trial
    Routine prac_Feedback
  LoopTerminator prac_trials
  Routine Instructions_3
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'trial': 'same', 'picture1': 'images/same/same1.jpg', 'picture2': 'images/same/same1.jpg', 'corrAns': 'left'},
      {'trial': 'same', 'picture1': 'images/same/same2.jpg', 'picture2': 'images/same/same2.jpg', 'corrAns': 'left'},
      {'trial': 'same', 'picture1': 'images/same/same3.jpg', 'picture2': 'images/same/same3.jpg', 'corrAns': 'left'},
      {'trial': 'same', 'picture1': 'images/same/same4.jpg', 'picture2': 'images/same/same4.jpg', 'corrAns': 'left'},
      {'trial': 'same', 'picture1': 'images/same/same5.jpg', 'picture2': 'images/same/same5.jpg', 'corrAns': 'left'},
      {'trial': 'same', 'picture1': 'images/same/same6.jpg', 'picture2': 'images/same/same6.jpg', 'corrAns': 'left'},
      {'trial': 'same', 'picture1': 'images/same/same7.jpg', 'picture2': 'images/same/same7.jpg', 'corrAns': 'left'},
      {'trial': 'same', 'picture1': 'images/same/same8.jpg', 'picture2': 'images/same/same8.jpg', 'corrAns': 'left'},
      {'trial': 'same', 'picture1': 'images/same/same9.jpg', 'picture2': 'images/same/same9.jpg', 'corrAns': 'left'},
      {'trial': 'same', 'picture1': 'images/same/same10.jpg', 'picture2': 'images/same/same10.jpg', 'corrAns': 'left'},
      {'trial': 'same', 'picture1': 'images/same/same11.jpg', 'picture2': 'images/same/same11.jpg', 'corrAns': 'left'},
      {'trial': 'same', 'picture1': 'images/same/same12.jpg', 'picture2': 'images/same/same12.jpg', 'corrAns': 'left'},
      {'trial': 'different', 'picture1': 'images/different/diff1.jpg', 'picture2': 'images/different/diff2.jpg', 'corrAns': 'right'}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
    Routine Trial
    Routine Feedback
  LoopTerminator trials
  Routine End
