PsychoPy2experiment version="2023.2.2"
Settings
  Audio lib = ptb
  Data filename = u'data/%s_1_4_1_%s_%s_%s' % (expInfo['主试ID'], expName, expInfo['编号'], expInfo['date'])
  Experiment info = {'编号': '', '主试ID': ''}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['audio/prac_rest_instr_1.wav', 'audio/prac_rest_instr_2.wav', 'audio/wrong.wav', 'audio/correct.wav', 'images/diff1.JPG', 'images/diff2.JPG', 'images/diff3.JPG', 'images/diff4.JPG', 'images/diff5.JPG', 'images/diff6.JPG', 'images/diff7.JPG', 'images/diff8.JPG', 'images/diff9.JPG', 'images/diff10.JPG', 'images/diff11.JPG', 'images/diff12.JPG', 'images/diff13.JPG', 'images/diff14.JPG', 'images/diff15.JPG', 'images/diff16.JPG', 'images/diff17.JPG', 'images/diff18.JPG', 'images/diff19.JPG', 'images/diff20.JPG', 'images/diff21.JPG', 'images/diff22.JPG', 'images/diff23.JPG', 'images/diff24.JPG', 'images/same1.JPG', 'images/same2.JPG', 'images/same3.JPG', 'images/same4.JPG', 'images/same5.JPG', 'images/same6.JPG', 'images/same7.JPG', 'images/same8.JPG', 'images/same9.JPG', 'images/same10.JPG', 'images/same11.JPG', 'images/same12.JPG']
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  color = -1.0000, -1.0000, -1.0000
  expName = PatternComparisonTask
  keyboardBackend = ioHub
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Routines
  Routine Instructions
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    TextComponent instructions_1
      font = Heiti SC
      letterHeight = 0.035
      startVal [time (s)] = 0.0
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      text:
        欢迎您参加本任务。

        在这项任务中，
        将同时呈现两个图片，
        您需要判断所呈现的图片是相同还是不同。

        如果图片相同，请按 z 键；
        如果图片不同，请按 m 键。


        按空格键继续。
    KeyboardComponent key_resp_1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    SoundComponent instr_1_sound
      sound = audio/instr_1.wav
      startVal [time (s)] = 0.0
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  Routine Instructions_2
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    TextComponent instructions_2
      font = Heiti SC
      letterHeight = 0.035
      startVal [time (s)] = 0.0
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      text:
        现在，请试一试。

        请保持注视屏幕上的“+”注视点，
        并在看到图片后立即做出反应，
        试着在保证正确的同时尽可能快地回答。

        如果您回答错误，继续回答下一题即可。
        记得，在整个实验过程中将手指放在答题键上。


        按空格键继续。
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    SoundComponent instr_2_sound
      sound = audio/instr_2_new.wav
      startVal [time (s)] = 0.0
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  Routine prac_Trial
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    CodeComponent code_2
      Code Type = Both
      Begin Experiment:
        exp_corr = []
        exp_rt = []
        prac_feedb = ''
        prac_feedbColor = ''
      Begin JS Experiment:
        exp_corr = [];
        exp_rt = [];
        prac_feedb = "";
        prac_feedbColor = "";
      Begin JS Routine:
        piclist = [];
        filename = "";
        for (var i, _pj_c = 0, _pj_a = util.range(1, 13), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            i = _pj_a[_pj_c];
            filename = `images/same${i}.JPG`;
            piclist.push(filename);
        }
        for (var j, _pj_c = 0, _pj_a = util.range(1, 25), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            j = _pj_a[_pj_c];
            filename = `images/diff${j}.JPG`;
            piclist.push(filename);
        }
        util.shuffle(piclist);
        prac_picture1 = piclist.pop();
        if ((prac_cond === "same")) {
            prac_picture2 = prac_picture1;
        }
        if ((prac_cond === "different")) {
            prac_picture2 = piclist.pop();
        }
      Begin Routine:
        piclist = [];
        filename = ''

        for i in range(1, 13):
            filename = f'images/same{i}.JPG'
            piclist.append(filename)

        for j in range(1, 25):
            filename = f'images/diff{j}.JPG'
            piclist.append(filename)

        shuffle(piclist)

        prac_picture1 = piclist.pop()

        if prac_cond == 'same':
            prac_picture2 = prac_picture1
        if prac_cond == 'different':
            prac_picture2 = piclist.pop()
      End JS Routine:
        if ((prac_response.corr === 1)) {
            prac_feedb = `正确!`;
            prac_feedb_audio = "audio/correct.wav";
            exp_rt.splice(0, 0, prac_response.rt);
        } else {
            prac_feedb = "\u9519\u8bef!";
            prac_feedb_audio = "audio/wrong.wav";
        }
        exp_corr.splice(0, 0, prac_response.corr);
        psychoJS.experiment.addData("exp_corr", exp_corr);
        psychoJS.experiment.addData("prac_feedb_text", prac_feedb);

        prac_feedb_sound = new sound.Sound({
            win: psychoJS.window,
            value: 'A',
            secs: 1,
            });
        prac_feedb_sound.setVolume(1.0)
      End Routine:
        if prac_response.corr == 1:
            prac_feedb = '正确!'
            prac_feedb_audio = 'audio/correct.wav'
            #prac_feedbColor = 'green'
            exp_rt.insert(0,prac_response.rt)
            #exp_rt.splice(0,0,prac_key_resp.rt)
        else:
            prac_feedb = '错误!'
            prac_feedb_audio = 'audio/wrong.wav'
            #prac_feedbColor = 'red'
        exp_corr.insert(0,prac_response.corr)

        thisExp.addData('exp_corr',exp_corr)
        thisExp.addData('prac_feedb_text',prac_feedb)
    TextComponent prac_fix
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    ImageComponent prac_first_stimulus
      image [set every repeat] = $prac_picture1
      pos = (-0.3, 0)
      size = (0.35, 0.35)
      startVal [time (s)] = 1
      units = height
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    ImageComponent prac_second_stimulus
      image [set every repeat] = $prac_picture2
      pos = (0.3, 0)
      size = (0.35, 0.35)
      startVal [time (s)] = 1
      units = height
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    TextComponent prac_keys_text
      font = Heiti SC
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 1
      text = < 相同       不同 >
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    KeyboardComponent prac_response
      allowedKeys = 'z','m'
      correctAns = $prac_corrAns
      forceEndRoutine = True
      startVal [time (s)] = 1
      storeCorrect = True
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  Routine prac_Feedback
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    TextComponent prac_feedback_text
      font = Heiti SC
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $prac_feedb
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    SoundComponent prac_feedb_sound
      sound [set every repeat] = $prac_feedb_audio
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine Trial
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    CodeComponent code
      Code Type = Both
      Begin JS Routine:
        piclist = [];
        filename = "";
        for (var i, _pj_c = 0, _pj_a = util.range(1, 13), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            i = _pj_a[_pj_c];
            filename = `images/same${i}.JPG`;
            piclist.push(filename);
        }
        for (var j, _pj_c = 0, _pj_a = util.range(1, 25), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            j = _pj_a[_pj_c];
            filename = `images/diff${j}.JPG`;
            piclist.push(filename);
        }
        util.shuffle(piclist);
        picture1 = piclist.pop();
        if ((cond === "same")) {
            picture2 = picture1;
        }
        if ((cond === "different")) {
            picture2 = piclist.pop();
        }
      Begin Routine:
        piclist = [];
        filename = ''

        for i in range(1, 13):
            filename = f'images/same{i}.JPG'
            piclist.append(filename)

        for j in range(1, 25):
            filename = f'images/diff{j}.JPG'
            piclist.append(filename)

        shuffle(piclist)

        picture1 = piclist.pop()

        if cond == 'same':
            picture2 = picture1
        if cond == 'different':
            picture2 = piclist.pop()
      End JS Routine:
        if ((response.corr === 1)) {
            exp_rt.splice(0, 0, response.rt);
        }
        exp_corr.splice(0, 0, response.corr);
        psychoJS.experiment.addData("exp_corr", exp_corr);
      End Routine:
        if response.corr == 1:
            exp_rt.insert(0,response.rt)

        exp_corr.insert(0,response.corr)

        thisExp.addData('exp_corr',exp_corr)
    TextComponent fix
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    ImageComponent first_stimulus
      image [set every repeat] = $picture1
      pos = (-0.3, 0)
      size = (0.35, 0.35)
      startVal [time (s)] = 1
      units = height
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    ImageComponent second_stimulus
      image [set every repeat] = $picture2
      pos = (0.3, 0)
      size = (0.35, 0.35)
      startVal [time (s)] = 1
      units = height
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    TextComponent keys_text
      font = Heiti SC
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 1
      text = < 相同       不同 >
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    KeyboardComponent response
      allowedKeys = 'z','m'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 1
      storeCorrect = True
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  Routine Feedback
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    CodeComponent feedback_code
      Code Type = JS
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      Begin JS Experiment:
        msg = "";
      Begin JS Routine:
        if (response.corr) {
            msg = `正确! RT=${response.rt.toFixed(2)}秒`;
        } else {
            msg = "\u9519\u8bef";
        }
    TextComponent feedback_text
      font = Heiti SC
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg
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  Routine End
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    TextComponent thank_you
      font = Heiti SC
      letterHeight = 0.035
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        实验结束。

        感谢您的参与！
  Routine prac_Block_Feedback
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    CodeComponent code_4
      Code Type = Both
      Begin Experiment:
        block_feedb = ''
        exp_acc = 0
        exp_meanRT = 0
      Begin JS Experiment:
        block_feedb = "";
        exp_acc = 0;
        exp_meanRT = 0
      Begin JS Routine:
        exp_acc = (exp_corr.reduce((a, b) => a + b, 0) / exp_corr.length) * 100;

        if (exp_rt.length == 0) {
            block_feedb = '您的正确率为0。\n请确保明白实验规则再继续实验。\n\n\n请按空格键继续。';
        } else {
            exp_meanRT = exp_rt.reduce((a, b) => a + b, 0) / exp_rt.length;
            block_feedb = `您的正确率为${exp_acc.toFixed(2)}%\n您的平均反应时为${exp_meanRT.toFixed(2)}秒\n\n\n请按空格键继续。`;
        }
      Begin Routine:
        exp_acc = (sum(exp_corr) / len(exp_corr) ) * 100;

        if len(exp_rt) == 0:
            block_feedb = '您的正确率为0。\n请确保明白实验规则再继续实验。\n\n\n请按空格键继续。';
        else:
            exp_meanRT = sum(exp_rt) / len(exp_rt);
            block_feedb = '您的正确率为%.2f%%\n您的平均反应时为%.2f秒\n\n\n请按空格键继续。'%(exp_acc,exp_meanRT);
      End JS Routine:
        exp_corr = [];
        exp_rt = [];
        prac_feedb = "";
        if ((exp_acc >= 60)) {
            prac_block_loop.finished = true;
        }
      End Routine:
        exp_corr = []
        exp_rt = []
        prac_feedb = ''

        if exp_acc >= 60:
            prac_block_loop.finished = True
    TextComponent prac_block_feedback_text
      font = Heiti SC
      letterHeight = 0.035
      startVal [time (s)] = 0.0
      text [set every repeat] = $block_feedb
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    KeyboardComponent prac_block_fb_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine prac_rest
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Experiment:
        prac_rest_text = ''
      Begin Routine:
        if prac_block_loop.thisN == 0:
            prac_rest_text = '如果您准备好了，请按空格键开始练习。'
            prac_rest_audio = 'audio/prac_rest_instr_1.wav'
        else:
            prac_rest_text = '练习实验的正确率需达到60%才能进入正式实验，\n\n没关系，再来练习一次吧！\n\n\n请按空格键开始练习。'
            prac_rest_audio = 'audio/prac_rest_instr_2.wav'
    TextComponent prac_rest_instr
      font = Heiti SC
      letterHeight = 0.035
      startVal [time (s)] = 0.0
      text [set every repeat] = $prac_rest_text
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    KeyboardComponent prac_rest_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    SoundComponent prac_rest_sound
      sound [set every repeat] = $prac_rest_audio
      startVal [time (s)] = 0.0
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  Routine Block_Feedback
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    CodeComponent code_5
      Code Type = Both
      Begin Experiment:
        blockn = 0
      Begin JS Experiment:
        blockn = 0;
      Begin JS Routine:
        exp_acc = ((util.sum(exp_corr) / exp_corr.length) * 100);
        blockn = (3 - block_loop.thisN);
        if ((exp_rt.length === 0)) {
            block_feedb = "\u60a8\u7684\u6b63\u786e\u7387\u4e3a0\u3002\n\u8bf7\u786e\u4fdd\u660e\u767d\u5b9e\u9a8c\u89c4\u5219\u518d\u7ee7\u7eed\u5b9e\u9a8c\u3002\n\n\n\u8bf7\u6309\u7a7a\u683c\u952e\u7ee7\u7eed\u3002";
        } else {
            exp_meanRT = (util.sum(exp_rt) / exp_rt.length);
            block_feedb = `您的正确率为${exp_acc.toFixed(2)}%\n您的平均反应时为${exp_meanRT.toFixed(2)}秒\n当前剩余${blockn.toFixed(0)}组实验\n\n\n请按空格键继续。`;
        }
      Begin Routine:
        exp_acc = (sum(exp_corr) / len(exp_corr)) * 100
        blockn=3-block_loop.thisN

        if len(exp_rt) == 0:
            block_feedb = '您的正确率为0。\n请确保明白实验规则再继续实验。\n\n\n请按空格键继续。'
        else:
            exp_meanRT = sum(exp_rt)/len(exp_rt)
            block_feedb = '您的正确率为%.2f%%\n您的平均反应时为%.2f秒\n当前剩余%d组实验\n\n\n请按空格键继续。'%(exp_acc,exp_meanRT,blockn)
      End JS Routine:
        exp_corr = [];
        exp_rt = [];
      End Routine:
        exp_corr = []
        exp_rt = []
    TextComponent block_feedback_text
      font = Heiti SC
      letterHeight = 0.035
      startVal [time (s)] = 0.0
      text [set every repeat] = $block_feedb
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    KeyboardComponent block_fb_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine rest
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    CodeComponent code_6
      Code Type = Both
      Begin Experiment:
        rest_text = ''
        blockn = 0
      Begin JS Experiment:
        rest_text = "";
      Begin JS Routine:
        if ((block_loop.thisN === 3)) {
            continueRoutine = false;
        } else {
            continueRoutine = true;
        }
        blockn = (3 - block_loop.thisN);
        rest_text = `休息2分钟

        准备好了请点击“继续”

        当前剩余${blockn}组实验`
        ;
      Begin Routine:
        if block_loop.thisN == 3:
            continueRoutine = False
        else:
            continueRoutine = True

        blockn=3-block_loop.thisN
        rest_text='休息2分钟\n\n准备好了请点击“继续”\n\n当前剩余%d组实验'%(blockn)
    TextComponent rest_instr
      font = Heiti SC
      letterHeight = 0.035
      startVal [time (s)] = 0.0
      text [set every repeat] = $rest_text
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    TextComponent contn
      font = Heiti SC
      letterHeight = 0.035
      pos = (0, -.3)
      startVal [time (s)] = 120
      text = 继续
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    MouseComponent mouse_contn
      clickable = contn
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 120
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  Routine Instructions_3
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    TextComponent instructions_3
      font = Heiti SC
      letterHeight = 0.035
      startVal [time (s)] = 0.0
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      text:
        做得好！练习结束了。

        我们开始正式实验吧。
        请注意，正式实验中不再提供正误反馈。

        记得，在看到数字后立即做出反应，
        试着在保证正确的同时尽可能快地回答。


        请按空格键继续。
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    SoundComponent instr_sound_3
      sound = audio/instr_3.wav
      startVal [time (s)] = 0.0
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Flow
  Routine Instructions
  Routine Instructions_2
  LoopInitiator prac_block_loop loopType="TrialHandler"
    loopType = random
    nReps = 999
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    Routine prac_rest
    LoopInitiator prac_trials loopType="TrialHandler"
      conditionsFile = prac_conditions.xlsx
      loopType = random
      nReps = 6
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      conditions:
        [{'prac_cond': 'same', 'prac_corrAns': 'z'},
        {'prac_cond': 'different', 'prac_corrAns': 'm'}]
      Routine prac_Trial
      Routine prac_Feedback
    LoopTerminator prac_trials
    Routine prac_Block_Feedback
  LoopTerminator prac_block_loop
  Routine Instructions_3
  LoopInitiator block_loop loopType="TrialHandler"
    loopType = random
    nReps = 4
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    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = conditions.xlsx
      loopType = random
      nReps = 6
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      conditions:
        [{'cond': 'same', 'corrAns': 'z'},
        {'cond': 'different', 'corrAns': 'm'}]
      Routine Trial
    LoopTerminator trials
    Routine Block_Feedback
  LoopTerminator block_loop
  Routine End
