PsychoPy2experiment version="2023.2.2"
Settings
  Audio lib = ptb
  Data filename = u'data/1_5_1_%s_%s_%s' % (expName, expInfo['编号'], expInfo['date'])
  Experiment info = {'编号': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = NBack_2Back
  keyboardBackend = ioHub
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Routines
  Routine instr
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    TextComponent welpage
      font = STSong
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        欢迎来到2-back实验！

        在这个实验中，您会依序在屏幕上看到不同的数字。

        如果现在这个数字和两个之前的数字是一样的，
        请按 f 键，

        如果现在这个数字和两个之前的数字是不同的，
        请按 j 键。


        请按空格键继续。
    KeyboardComponent instr_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine rest
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    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Experiment:
        rest_text = ''
      Begin Routine:
        if block_loop.thisN == 0:
            rest_text = '做得好！练习结束了。\n\n让我们开始正式实验吧。\n请注意，正式实验中不再提供正误反馈。\n\n记得，在看到数字后立即做出反应，\n试着在保证正确的同时尽可能快地回答。\n\n\n请按空格键继续。'
        else:
            rest_text = '做得好！休息一下吧。\n\n休息好后，请按空格键继续实验。\n\n后面实验的要求与之前是一样的。'
    TextComponent rest_instr
      font = STSong
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text [set every repeat] = $rest_text
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    KeyboardComponent rest_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fixation
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    TextComponent fix
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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  Routine exp
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        count = 0
        tempnum = []
        num = 0
        exp_corr = []
        exp_rt = []
        prac_feedb = ''
        prac_feedbColor = ''
      Begin Routine:
        numlist = [0,1,2,3,4,5,6,7,8,9]
        shuffle(numlist)
        num = numlist.pop()
        count = count + 1
        if count > 2:
            if cond == 'same':
                num = tempnum[1]
                tempnum.pop(1)
            if cond == 'different':
                while num == tempnum[1]:
                    num = numlist.pop()
                tempnum.pop(1)
      End Routine:
        if count > 2:
            if not key_resp.keys:
                prac_feedb = '太慢!'
                key_resp.corr = 0
            elif key_resp.corr == 1:
                prac_feedb = '正确!'
                prac_feedbColor = 'green'
                exp_rt.insert(0,key_resp.rt)
            else:
                prac_feedb = '错误!'
                prac_feedbColor = 'red'
            exp_corr.insert(0,key_resp.corr)

        tempnum.insert(0,num)
        thisExp.addData('stimuli',num)
        thisExp.addData('exp_corr',exp_corr)
    TextComponent stimu
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $num
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    TextComponent blank
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1
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    KeyboardComponent key_resp
      allowedKeys = 'f','j'
      correctAns = $correctAns
      forceEndRoutine = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.5
      storeCorrect = True
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  Routine block_fb
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Experiment:
        block_feedb = ''
      Begin Routine:
        exp_acc = (sum(exp_corr) / len(exp_corr)) * 100

        if len(exp_rt) == 0:
            block_feedb = '您的正确率为0。\n请确保明白实验规则再继续实验。\n\n\n请按空格键继续。'
        else:
            exp_meanRT = sum(exp_rt)/len(exp_rt)
            block_feedb = '您的正确率为%.2f%%\n您的平均反应时为%.2f秒\n\n\n请按空格键继续。'%(exp_acc,exp_meanRT)
      End Routine:
        count = 0
        exp_corr = []
        exp_rt = []
    TextComponent block_feedb_text
      font = STSong
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text [set every repeat] = $block_feedb
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    KeyboardComponent block_fb_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine thanks
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    TextComponent endpage
      font = STSong
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        实验结束。

        感谢您的参与！
  Routine prac_trial_fb
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    TextComponent prac_feedb_text
      color [set every repeat] = $prac_feedbColor
      font = STSong
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $prac_feedb
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  Routine instr_2
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    TextComponent welpage_2
      font = STSong
      letterHeight = 0.03
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
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      text:
        例如，在下面这种情况下，

        当前数字和两个之前的数字是一样的，
        所以应该按 f 键。
    TextComponent welpage_2_2
      font = STSong
      letterHeight = 0.03
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = 请按 f 键继续。
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    ImageComponent same_e_g
      image = same示例.jpg
      size = (0.6, 0.4)
      startVal [time (s)] = 0.0
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    KeyboardComponent instr_key_resp_2
      allowedKeys = 'f'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instr_3
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    TextComponent welpage_3
      font = STSong
      letterHeight = 0.03
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
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      text:
        在下面这种情况下，

        当前数字和两个之前的数字是不同的，
        所以应该按 j 键。
    TextComponent welpage_3_2
      font = STSong
      letterHeight = 0.03
      pos = (0,-0.3)
      startVal [time (s)] = 0.0
      text = 请按 j 键继续。
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    ImageComponent different_e_g
      image = different示例.jpg
      size = (0.6, 0.4)
      startVal [time (s)] = 0.0
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    KeyboardComponent instr_key_resp_3
      allowedKeys = 'j'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instr_4
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    TextComponent welpage_4
      font = STSong
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        现在请试一试。

        请保持注视屏幕上的“+”注视点，
        并在看到数字后立即做出反应，
        试着在保证正确的同时尽可能快地回答。

        如果您回答错误，继续回答下一题即可。
        记得，回答完之后把手指保持在 f 键和 j 键上。


        请按空格键继续。
    KeyboardComponent instr_key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine prac_fixation
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    TextComponent prac_fix
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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  Routine prac_exp
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        count = 0
        tempnum = []
        num = 0
        exp_corr = []
        exp_rt = []
        prac_feedb = ''
        prac_feedbColor = ''
      Begin Routine:
        numlist = [0,1,2,3,4,5,6,7,8,9]
        shuffle(numlist)
        num = numlist.pop()
        count = count + 1
        if count > 2:
            if cond == 'same':
                num = tempnum[1]
                tempnum.pop(1)
            if cond == 'different':
                while num == tempnum[1]:
                    num = numlist.pop()
                tempnum.pop(1)
      End Routine:
        if count > 2:
            if not prac_key_resp.keys:
                prac_feedb = '太慢!'
                prac_key_resp.corr = 0
            elif prac_key_resp.corr == 1:
                prac_feedb = '正确!'
                prac_feedbColor = 'green'
                exp_rt.insert(0,prac_key_resp.rt)
            else:
                prac_feedb = '错误!'
                prac_feedbColor = 'red'
            exp_corr.insert(0,prac_key_resp.corr)

        tempnum.insert(0,num)
        thisExp.addData('stimuli',num)
        thisExp.addData('exp_corr',exp_corr)
        thisExp.addData('prac_feedb_text',prac_feedb)
    TextComponent prac_stimu
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $num
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    TextComponent prac_blank
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1
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    KeyboardComponent prac_key_resp
      allowedKeys = 'f','j'
      correctAns = $correctAns
      forceEndRoutine = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.5
      storeCorrect = True
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  Routine prac_block_fb
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Experiment:
        block_feedb = ''
      Begin Routine:
        exp_acc = (sum(exp_corr) / len(exp_corr)) * 100

        if len(exp_rt) == 0:
            block_feedb = '您的正确率为0。\n请确保明白实验规则再继续实验。\n\n\n请按空格键继续。'
        else:
            exp_meanRT = sum(exp_rt)/len(exp_rt)
            block_feedb = '您的正确率为%.2f%%\n您的平均反应时为%.2f秒\n\n\n请按空格键继续。'%(exp_acc,exp_meanRT)
      End Routine:
        count = 0
        exp_corr = []
        exp_rt = []
        prac_feedb = ''

        if exp_acc >= 60:
            prac_block_loop.finished = True
    TextComponent prac_block_feedb_text
      font = STSong
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text [set every repeat] = $block_feedb
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    KeyboardComponent prac_block_fb_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine prac_rest
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Experiment:
        prac_rest_text = ''
      Begin Routine:
        if prac_block_loop.thisN == 0:
            prac_rest_text = '如果您准备好了，请按空格键开始练习。'
        else:
            prac_rest_text = '练习实验的正确率需达到60%才能进入正式实验，\n\n没关系，再来练习一次吧！\n\n\n请按空格键开始练习。'
    TextComponent prac_rest_instr
      font = STSong
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text [set every repeat] = $prac_rest_text
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    KeyboardComponent prac_rest_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instr_3_1
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    TextComponent welpage_3_1
      font = STSong
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        每次实验开头的前两个数字无法与其它数字进行比对，
        因此无需做出反应，
        也就是说，您需要从第三个数字呈现时开始做出反应。


        请按空格键继续。
    KeyboardComponent instr_key_resp_3_1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instr
  Routine instr_2
  Routine instr_3
  Routine instr_3_1
  Routine instr_4
  LoopInitiator prac_block_loop loopType="TrialHandler"
    loopType = sequential
    nReps = 999
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    Routine prac_rest
    LoopInitiator prac_trials_loop loopType="TrialHandler"
      conditionsFile = trials_loop.xlsx
      loopType = random
      nReps = 6
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      conditions:
        [{'cond': 'same', 'correctAns': 'f'},
        {'cond': 'different', 'correctAns': 'j'}]
      Routine prac_fixation
      Routine prac_exp
      Routine prac_trial_fb
    LoopTerminator prac_trials_loop
    Routine prac_block_fb
  LoopTerminator prac_block_loop
  LoopInitiator block_loop loopType="TrialHandler"
    loopType = sequential
    nReps = 2
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    conditions:
      [{'rest_text': '如果您准备好了，请按空格键开始练习。'},
      {'rest_text': '做得好！练习结束了。\n\n让我们开始正式实验吧。\n请注意，正式实验中不再提供正误反馈。\n\n\n请按空格键继续。'},
      {'rest_text': '做得好！休息一下吧。\n\n休息好后，请按空格键继续实验。\n\n后面实验的要求与之前是一样的。'}]
    Routine rest
    LoopInitiator trials_loop loopType="TrialHandler"
      conditionsFile = trials_loop.xlsx
      loopType = random
      nReps = 6
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      conditions:
        [{'cond': 'same', 'correctAns': 'f'},
        {'cond': 'different', 'correctAns': 'j'}]
      Routine fixation
      Routine exp
    LoopTerminator trials_loop
    Routine block_fb
  LoopTerminator block_loop
  Routine thanks
