PsychoPy2experiment version="2023.2.2"
Settings
  Audio lib = ptb
  Data filename = u'data/%s_1_5_1_%s_%s_%s' % (expInfo['主试ID'], expName, expInfo['编号'], expInfo['date'])
  Experiment info = {'编号': '', '主试ID': ''}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['audio/prac_rest_instr_1.wav', 'audio/prac_rest_instr_2.wav', 'audio/noresp.wav', 'audio/tooslow.wav', 'audio/wrong.wav', 'audio/correct.wav']
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  color = -1.0000, -1.0000, -1.0000
  expName = NBack_2Back
  keyboardBackend = ioHub
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Routines
  Routine instr
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    TextComponent welpage
      font = Heiti SC
      letterHeight = 0.035
      startVal [time (s)] = 0.0
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      text:
        欢迎来到2-back实验！

        在这个实验中，您会依序在屏幕上看到不同的数字。

        如果现在这个数字和往前数第2个数字是一样的，
        请按 z 键，

        如果现在这个数字和往前数第2个数字是不同的，
        请按 m 键。


        请按空格键继续。
    KeyboardComponent instr_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    SoundComponent instr_sound
      sound = audio/instr.wav
      startVal [time (s)] = 0.0
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  Routine instr_6
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    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Experiment:
        rest_text = ''
      Begin Routine:
        if block_loop.thisN == 0:
            rest_text = '做得好！练习结束了。\n\n让我们开始正式实验吧。\n请注意，正式实验中不再提供正误反馈。\n\n记得，在看到数字后立即做出反应，\n试着在保证正确的同时尽可能快地回答。\n\n\n请按空格键继续。'
        else:
            rest_text = '做得好！休息一下吧。\n\n休息好后，请按空格键继续实验。\n\n后面实验的要求与之前是一样的。'
    TextComponent rest_instr
      font = Heiti SC
      letterHeight = 0.035
      startVal [time (s)] = 0.0
      text [set every repeat] = $rest_text
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    KeyboardComponent rest_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine exp
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        count = 0
        tempnum = []
        num = 0
        exp_corr = []
        exp_rt = []
        prac_feedb = ''
        prac_feedbColor = ''
      Begin Routine:
        numlist = [0,1,2,3,4,5,6,7,8,9]
        shuffle(numlist)
        num = numlist.pop()
        count = count + 1
        if count > 2:
            if cond == 'same':
                num = tempnum[1]
                tempnum.pop(1)
            if cond == 'different':
                while num == tempnum[1]:
                    num = numlist.pop()
                tempnum.pop(1)
      End Routine:
        if count > 2:
            if not key_resp.keys:
                prac_feedb = '太慢!'
                key_resp.corr = 0
            elif key_resp.corr == 1:
                prac_feedb = '正确!'
                prac_feedbColor = 'green'
                exp_rt.insert(0,key_resp.rt)
            else:
                prac_feedb = '错误!'
                prac_feedbColor = 'red'
            exp_corr.insert(0,key_resp.corr)

        tempnum.insert(0,num)
        thisExp.addData('stimuli',num)
        thisExp.addData('exp_corr',exp_corr)
    TextComponent stimu
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.76
      text [set every repeat] = $num
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    TextComponent blank
      letterHeight = 0.05
      startVal [time (s)] = 0.76
      stopVal [duration (s)] = 1.5
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    KeyboardComponent key_resp
      allowedKeys = 'z','m'
      correctAns = $correctAns
      forceEndRoutine = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2.26
      storeCorrect = True
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  Routine block_fb
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    CodeComponent code_3
      Code Type = Both
      Begin Experiment:
        block_feedb = ''
        blockn = 0
      Begin JS Experiment:
        block_feedb = "";
        blockn = 0;
      Begin JS Routine:
        exp_acc = ((util.sum(exp_corr) / exp_corr.length) * 100);
        blockn = (3 - block_loop.thisN);
        if ((exp_rt.length === 0)) {
            block_feedb = "\u60a8\u7684\u6b63\u786e\u7387\u4e3a0\u3002\n\u8bf7\u786e\u4fdd\u660e\u767d\u5b9e\u9a8c\u89c4\u5219\u518d\u7ee7\u7eed\u5b9e\u9a8c\u3002\n\n\n\u8bf7\u6309\u7a7a\u683c\u952e\u7ee7\u7eed\u3002";
        } else {
            exp_meanRT = (util.sum(exp_rt) / exp_rt.length);
            block_feedb = `您的正确率为${exp_acc.toFixed(2)}%\n您的平均反应时为${exp_meanRT.toFixed(2)}秒\n当前剩余${blockn.toFixed(0)}组实验\n\n\n请按空格键继续。`;
        }
      Begin Routine:
        exp_acc = (sum(exp_corr) / len(exp_corr)) * 100
        blockn = 3-block_loop.thisN

        if len(exp_rt) == 0:
            block_feedb = '您的正确率为0。\n请确保明白实验规则再继续实验。\n\n\n请按空格键继续。'
        else:
            exp_meanRT = sum(exp_rt)/len(exp_rt)
            block_feedb = '您的正确率为%.2f%%\n您的平均反应时为%.2f秒\n当前剩余%d组实验\n\n\n请按空格键继续。'%(exp_acc,exp_meanRT,blockn)
      End JS Routine:
        count = 0;
        exp_corr = [];
        exp_rt = [];
      End Routine:
        count = 0
        exp_corr = []
        exp_rt = []
    TextComponent block_feedb_text
      font = Heiti SC
      letterHeight = 0.035
      startVal [time (s)] = 0.0
      text [set every repeat] = $block_feedb
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    KeyboardComponent block_fb_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine thanks
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    TextComponent endpage
      font = Heiti SC
      letterHeight = 0.035
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        实验结束。

        感谢您的参与！
  Routine prac_trial_fb
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    TextComponent prac_feedb_text
      color = 1.0000, 1.0000, 1.0000
      font = Heiti SC
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.65
      text [set every repeat] = $prac_feedb
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    SoundComponent prac_feedb_sound
      sound [set every repeat] = $prac_feedb_audio
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.65
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  Routine instr_2
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    TextComponent welpage_2
      font = Heiti SC
      letterHeight = 0.035
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
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      text:
        例如，在下面这种情况下，

        当前数字和往前数第2个数字是一样的，
        所以应该按 z 键。
    TextComponent welpage_2_2
      font = Heiti SC
      letterHeight = 0.035
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = 请按 z 键继续。
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    ImageComponent same_e_g
      image = sm_example_new.png
      size = (0.5,0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent instr_key_resp_2
      allowedKeys = 'z'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    SoundComponent instr_2_sound
      sound = audio/instr_2.wav
      startVal [time (s)] = 0.0
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  Routine instr_3
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    TextComponent welpage_3
      font = Heiti SC
      letterHeight = 0.035
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
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      text:
        在下面这种情况下，

        当前数字和往前数第2个数字是不同的，
        所以应该按 m 键。
    TextComponent welpage_3_2
      font = Heiti SC
      letterHeight = 0.035
      pos = (0,-0.35)
      startVal [time (s)] = 0.0
      text = 请按 m 键继续。
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    ImageComponent different_e_g
      image = diff_example_new.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent instr_key_resp_3
      allowedKeys = 'm'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    SoundComponent instr_3_sound
      sound = audio/instr_3.wav
      startVal [time (s)] = 0.0
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  Routine instr_4
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    TextComponent welpage_4
      font = Heiti SC
      letterHeight = 0.035
      startVal [time (s)] = 0.0
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      text:
        现在请试一试。

        请保持注视屏幕上的“+”注视点，
        并在看到数字后立即做出反应。


        请按空格键继续。
    KeyboardComponent instr_key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    SoundComponent instr_4_sound
      sound = audio/instr_4.wav
      startVal [time (s)] = 0.0
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  Routine prac_fixation
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    TextComponent prac_fix
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
      text = +
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  Routine prac_exp
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    CodeComponent code_2
      Code Type = Both
      Begin Experiment:
        count = 0
        tempnum = []
        num = 0
        exp_corr = []
        exp_rt = []
        prac_feedb = ''
        prac_feedbColor = ''
      Begin JS Experiment:
        count = 0;
        tempnum = [];
        num = 0;
        exp_corr = [];
        exp_rt = [];
        prac_feedb = "";
        prac_feedbColor = "";
      Begin JS Routine:
        numlist = [0, 1, 2, 3, 4, 5, 6, 7, 8, 9];
        util.shuffle(numlist);
        num = numlist.pop();
        count = (count + 1);
        if ((count > 2)) {
            if ((cond === "same")) {
                num = tempnum[1];
                tempnum.pop(1);
            }
            if ((cond === "different")) {
                while ((num === tempnum[1])) {
                    num = numlist.pop();
                }
                tempnum.pop(1);
            }
        }
      Begin Routine:
        numlist = [0,1,2,3,4,5,6,7,8,9]
        shuffle(numlist)
        num = numlist.pop()
        count = count + 1
        if count > 2:
            if cond == 'same':
                num = tempnum[1]
                tempnum.pop(1)
            if cond == 'different':
                while num == tempnum[1]:
                    num = numlist.pop()
                tempnum.pop(1)
      End JS Routine:
        if ((count <= 2)) {
            prac_feedb_audio = "audio/noresp.wav";
        }
        if ((count > 2)) {
            if ((! prac_key_resp.keys)) {
                prac_feedb = "\u592a\u6162!";
                prac_feedb_audio = "audio/tooslow.wav";
                prac_key_resp.corr = 0;
            } else {
                if ((prac_key_resp.corr === 1)) {
                    prac_feedb = "\u6b63\u786e!";
                    prac_feedb_audio = "audio/correct.wav";
                    exp_rt.splice(0, 0, prac_key_resp.rt);
                } else {
                    prac_feedb = "\u9519\u8bef!";
                    prac_feedb_audio = "audio/wrong.wav";
                }
            }
            exp_corr.splice(0, 0, prac_key_resp.corr);
        }
        tempnum.splice(0, 0, num);
        psychoJS.experiment.addData("stimuli", num);
        psychoJS.experiment.addData("exp_corr", exp_corr);
        psychoJS.experiment.addData("prac_feedb_text", prac_feedb);

        prac_feedb_sound = new sound.Sound({
            win: psychoJS.window,
            value: 'A',
            secs: 0.65,
            });
        prac_feedb_sound.setVolume(1.0)
      End Routine:
        if count <= 2:
            prac_feedb_audio = 'audio/noresp.wav'

        if count > 2:
            if not prac_key_resp.keys:
                prac_feedb = '太慢!'
                prac_feedb_audio = 'audio/tooslow.wav'
                prac_key_resp.corr = 0
            elif prac_key_resp.corr == 1:
                prac_feedb = '正确!'
                prac_feedb_audio = 'audio/correct.wav'
                #prac_feedbColor = 'green'
                exp_rt.insert(0,prac_key_resp.rt)
                #exp_rt.splice(0,0,prac_key_resp.rt)
            else:
                prac_feedb = '错误!'
                prac_feedb_audio = 'audio/wrong.wav'
                #prac_feedbColor = 'red'
            exp_corr.insert(0,prac_key_resp.corr)
            #exp_corr.splice(0,0,prac_key_resp.corr)

        #offline py version
        tempnum.insert(0,num)
        #online js version
        #tempnum.splice(0,0,num)
        thisExp.addData('stimuli',num)
        thisExp.addData('exp_corr',exp_corr)
        thisExp.addData('prac_feedb_text',prac_feedb)
    TextComponent prac_stimu
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.76
      text [set every repeat] = $num
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    TextComponent prac_blank
      letterHeight = 0.05
      startVal [time (s)] = 0.76
      stopVal [duration (s)] = 1.5
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    KeyboardComponent prac_key_resp
      allowedKeys = 'z','m'
      correctAns = $correctAns
      forceEndRoutine = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2.26
      storeCorrect = True
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  Routine prac_block_fb
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    CodeComponent code_5
      Code Type = Both
      Begin Experiment:
        block_feedb = ''
        exp_acc = 0
        exp_meanRT = 0
      Begin JS Experiment:
        block_feedb = "";
        exp_acc = 0;
        exp_meanRT = 0
      Begin JS Routine:
        exp_acc = (exp_corr.reduce((a, b) => a + b, 0) / exp_corr.length) * 100;

        if (exp_rt.length == 0) {
            block_feedb = '您的正确率为0。\n请确保明白实验规则再继续实验。\n\n\n请按空格键继续。';
        } else {
            exp_meanRT = exp_rt.reduce((a, b) => a + b, 0) / exp_rt.length;
            block_feedb = `您的正确率为${exp_acc.toFixed(2)}%\n您的平均反应时为${exp_meanRT.toFixed(2)}秒\n\n\n请按空格键继续。`;
        }
      Begin Routine:
        exp_acc = (sum(exp_corr) / len(exp_corr) ) * 100;

        if len(exp_rt) == 0:
            block_feedb = '您的正确率为0。\n请确保明白实验规则再继续实验。\n\n\n请按空格键继续。';
        else:
            exp_meanRT = sum(exp_rt) / len(exp_rt);
            block_feedb = '您的正确率为%.2f%%\n您的平均反应时为%.2f秒\n\n\n请按空格键继续。'%(exp_acc,exp_meanRT);
      End JS Routine:
        count = 0;
        exp_corr = [];
        exp_rt = [];
        prac_feedb = "";
        if ((exp_acc >= 60)) {
            prac_block_loop.finished = true;
        }
      End Routine:
        count = 0
        exp_corr = []
        exp_rt = []
        prac_feedb = ''

        if exp_acc >= 60:
            prac_block_loop.finished = True
    TextComponent prac_block_feedb_text
      font = Heiti SC
      letterHeight = 0.035
      startVal [time (s)] = 0.0
      text [set every repeat] = $block_feedb
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    KeyboardComponent prac_block_fb_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine prac_rest
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    CodeComponent code_4
      Code Type = Both
      Begin Experiment:
        prac_rest_text = ''
      Begin JS Experiment:
        prac_rest_text = "";
      Begin JS Routine:
        if ((prac_block_loop.thisN === 0)) {
            prac_rest_text = "\u5982\u679c\u60a8\u51c6\u5907\u597d\u4e86\uff0c\u8bf7\u6309\u7a7a\u683c\u952e\u5f00\u59cb\u7ec3\u4e60\u3002";
            prac_rest_audio = "audio/prac_rest_instr_1.wav";
        } else {
            prac_rest_text = "\u7ec3\u4e60\u5b9e\u9a8c\u7684\u6b63\u786e\u7387\u9700\u8fbe\u523060%\u624d\u80fd\u8fdb\u5165\u6b63\u5f0f\u5b9e\u9a8c\uff0c\n\n\u6ca1\u5173\u7cfb\uff0c\u518d\u6765\u7ec3\u4e60\u4e00\u6b21\u5427\uff01\n\n\n\u8bf7\u6309\u7a7a\u683c\u952e\u5f00\u59cb\u7ec3\u4e60\u3002";
            prac_rest_audio = "audio/prac_rest_instr_2.wav";
        }
      Begin Routine:
        if prac_block_loop.thisN == 0:
            prac_rest_text = '如果您准备好了，请按空格键开始练习。'
            prac_rest_audio = 'audio/prac_rest_instr_1.wav'
        else:
            prac_rest_text = '练习实验的正确率需达到60%才能进入正式实验，\n\n没关系，再来练习一次吧！\n\n\n请按空格键开始练习。'
            prac_rest_audio = 'audio/prac_rest_instr_2.wav'
      End JS Routine:
        prac_rest_audio = new sound.Sound({
              win: psychoJS.window,
              value: 'A',
              secs: 1.5,
              });
        prac_rest_audio.setVolume(1.0);
    TextComponent prac_rest_instr
      font = Heiti SC
      letterHeight = 0.035
      startVal [time (s)] = 0.0
      text [set every repeat] = $prac_rest_text
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    KeyboardComponent prac_rest_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    SoundComponent prac_rest_sound
      sound [set every repeat] = $prac_rest_audio
      startVal [time (s)] = 0.0
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  Routine instr_3_1
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    TextComponent welpage_3_1
      font = Heiti SC
      letterHeight = 0.035
      startVal [time (s)] = 0.0
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      text:
        每次实验开头的前两个数字无法与其它数字进行比对，
        因此无需做出反应，

        也就是说，您需要从第三个数字呈现时开始做出反应。


        请按空格键继续。
    KeyboardComponent instr_key_resp_3_1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    SoundComponent instr_3_1_sound
      sound = audio/instr_3_1.wav
      startVal [time (s)] = 0.0
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  Routine rest
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    CodeComponent code_7
      Code Type = Both
      Begin Experiment:
        rest_text=''
        blockn=0
      Begin JS Experiment:
        rest_text = "";
        blockn = 0;
      Begin JS Routine:
        if ((block_loop.thisN === 3)) {
            continueRoutine = false;
        } else {
            continueRoutine = true;
        }
        blockn = (3 - block_loop.thisN);
        rest_text = `休息2分钟

        准备好了请点击“继续”

        当前剩余${blockn}组实验`
        ;
      Begin Routine:
        if block_loop.thisN == 3:
            continueRoutine = False
        else:
            continueRoutine = True

        blockn=3-block_loop.thisN
        rest_text='休息2分钟\n\n准备好了请点击“继续”\n\n当前剩余%d组实验'%(blockn)
    TextComponent text_rest
      font = Heiti SC
      letterHeight = 0.035
      startVal [time (s)] = 0.0
      text [set every repeat] = $rest_text
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    TextComponent contn
      font = Heiti SC
      letterHeight = 0.035
      pos = (0, -.3)
      startVal [time (s)] = 120
      text = 继续
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    MouseComponent mouse_contn
      clickable = contn
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 120
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  Routine instr_5
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    TextComponent welpage_exp
      font = Heiti SC
      letterHeight = 0.035
      startVal [time (s)] = 0.0
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      text:
        练习结束了。

        让我们开始正式实验吧。
        请注意，正式实验中不再提供正误反馈。

        记得，在看到数字后立即做出反应，
        试着在保证正确的同时尽可能快地回答。


        请按空格键继续。
    KeyboardComponent instr_key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    SoundComponent instr_sound_5
      sound = audio/instr_5_new.wav
      startVal [time (s)] = 0.0
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  Routine fixation
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    TextComponent fix
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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  Routine instr_3_2
    TextComponent text_45
      font = Heiti SC
      letterHeight = 0.035
      pos = (0,0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
      text = 试一试
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
    TextComponent text_9
      font = Heiti SC
      letterHeight = 0.035
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
      text = 请判断：这个数字与往前数第2个数字 相同 还是 不同？
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
      text = 5
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    SoundComponent instr_3_2_sound
      sound = audio/instr_3_2.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
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  Routine instr_3_3
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    TextComponent text_2
      font = Heiti SC
      letterHeight = 0.035
      startVal [time (s)] = 0.0
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      text:
        正确答案是 不作反应 ，因为往前数两个没有数字。


        请按空格键继续。
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    SoundComponent instr_3_3_sound
      sound = audio/instr_3_3.wav
      startVal [time (s)] = 0.0
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  Routine instr_3_4
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    TextComponent text_10
      font = Heiti SC
      letterHeight = 0.035
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
      text = 请判断：这个数字与往前数第2个数字 相同 还是 不同？
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
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      text:
        3
    SoundComponent instr_3_4_sound
      sound = audio/instr_3_2.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
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  Routine instr_3_5
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    TextComponent text_4
      font = Heiti SC
      letterHeight = 0.035
      startVal [time (s)] = 0.0
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      text:
        正确答案同样是 不作反应 ，因为往前数两个没有数字。


        请按空格键继续。
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    SoundComponent instr_3_5_sound
      sound = audio/instr_3_5.wav
      startVal [time (s)] = 0.0
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  Routine instr_3_6
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    TextComponent text_12
      font = Heiti SC
      letterHeight = 0.035
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
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      text:
        请判断：这个数字与往前数第2个数字 相同 还是 不同？
        (提示：您需要回忆刚才呈现过的数字，做出判断）
    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        7
    TextComponent text_11
      font = Heiti SC
      letterHeight = 0.035
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
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      text:
        相同                      不同
         按z键                    按m键
    KeyboardComponent key_resp_4
      allowedKeys = 'z','m'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    SoundComponent instr_3_6_sound
      sound = audio/instr_3_2.wav
      startVal [time (s)] = 0.0
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  Routine instr_3_7
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    TextComponent text_6
      font = Heiti SC
      letterHeight = 0.035
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
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      text:
        正确答案是 不同 ，因为当前数字跟往前数第2个数字不同。
    TextComponent text_7
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        7
    TextComponent text_13
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.03
      pos = (-0.1, 0.03)
      startVal [time (s)] = 0.0
      text = 3
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    TextComponent text_8
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.03
      pos = (-0.2, 0.03)
      startVal [time (s)] = 0.0
      text = 5
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    TextComponent text_14
      font = Heiti SC
      letterHeight = 0.035
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = 请按空格键继续。
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    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    SoundComponent instr_3_7_sound
      sound = audio/instr_3_7.wav
      startVal [time (s)] = 0.0
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  Routine instr_3_8
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    TextComponent text_15
      font = Heiti SC
      letterHeight = 0.035
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
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      text:
        请判断：这个数字与往前数第2个数字 相同 还是 不同？
        (提示：您需要回忆刚才呈现过的数字，做出判断）
    TextComponent text_16
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        3
    TextComponent text_17
      font = Heiti SC
      letterHeight = 0.035
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
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      text:
        相同                      不同
         按z键                    按m键
    KeyboardComponent key_resp_6
      allowedKeys = 'z','m'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    SoundComponent instr_3_8_sound
      sound = audio/instr_3_2.wav
      startVal [time (s)] = 0.0
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  Routine instr_3_9
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    TextComponent text_18
      font = Heiti SC
      letterHeight = 0.035
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
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      text:
        正确答案是 相同 ，因为当前数字跟往前数第2个数字是一样的。
    TextComponent text_19
      color = 0.3569, 1.0000, -0.6314
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        3
    TextComponent text_23
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.03
      pos = (-0.1, 0.03)
      startVal [time (s)] = 0.0
      text = 7
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    TextComponent text_20
      color = 0.3569, 1.0000, -0.6314
      letterHeight = 0.03
      pos = (-0.2, 0.03)
      startVal [time (s)] = 0.0
      text = 3
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    TextComponent text_21
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.03
      pos = (-0.3, 0.03)
      startVal [time (s)] = 0.0
      text = 5
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    TextComponent text_22
      font = Heiti SC
      letterHeight = 0.035
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = 请按空格键继续。
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    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    SoundComponent instr_3_9_sound
      sound = audio/instr_3_9.wav
      startVal [time (s)] = 0.0
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  Routine instr_4_1
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    TextComponent welpage_5
      font = Heiti SC
      letterHeight = 0.035
      startVal [time (s)] = 0.0
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      text:
        请注意，在下面的实验中，
        数字会很快消失，
        因此，请试着在保证正确的同时尽可能快地回答。


        请按空格键继续。
    KeyboardComponent instr_key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    SoundComponent instr_4_1_sound
      sound = audio/instr_4_1.wav
      startVal [time (s)] = 0.0
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  Routine instr_4_2
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    TextComponent welpage_6
      font = Heiti SC
      letterHeight = 0.035
      startVal [time (s)] = 0.0
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      text:
        如果您回答错误，继续回答下一题即可。
        记得，回答完之后把手指保持在 z 键和 m 键上。


        请按空格键继续。
    KeyboardComponent instr_key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    SoundComponent instr_4_2_sound
      sound = audio/instr_4_2.wav
      startVal [time (s)] = 0.0
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  Routine instr_4_3
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    TextComponent welpage_7
      font = Heiti SC
      letterHeight = 0.035
      startVal [time (s)] = 0.0
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      text:
        您的任务是判断当前显示的数字是否与
        往前数第2个位置显示的数字相同。

        如果相同，请按下键盘上的 z 键；
        如果不同，请按下 m 键。


        请按空格键继续。
    KeyboardComponent instr_key_resp_8
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    SoundComponent instr_4_sound_2
      sound = audio/instr_4_3.wav
      startVal [time (s)] = 0.0
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  Routine instr_3_10
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    TextComponent text_24
      font = Heiti SC
      letterHeight = 0.035
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
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      text:
        请判断：这个数字与往前数第2个数字 相同 还是 不同？
        (提示：您需要回忆刚才呈现过的数字，做出判断）
    TextComponent text_25
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        7
    TextComponent text_26
      font = Heiti SC
      letterHeight = 0.035
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
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      text:
        相同                      不同
         按z键                    按m键
    KeyboardComponent key_resp_8
      allowedKeys = 'z','m'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    SoundComponent instr_3_8_sound_2
      sound = audio/instr_3_2.wav
      startVal [time (s)] = 0.0
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  Routine instr_3_11
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    TextComponent text_27
      font = Heiti SC
      letterHeight = 0.035
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
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      text:
        正确答案是 相同 ，因为当前数字跟往前数第2个数字是一样的。
    TextComponent text_28
      color = 0.3569, 1.0000, -0.6314
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        7
    TextComponent text_29
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.03
      pos = (-0.1, 0.03)
      startVal [time (s)] = 0.0
      text = 3
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    TextComponent text_30
      color = 0.3569, 1.0000, -0.6314
      letterHeight = 0.03
      pos = (-0.2, 0.03)
      startVal [time (s)] = 0.0
      text = 7
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    TextComponent text_31
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.03
      pos = (-0.3, 0.03)
      startVal [time (s)] = 0.0
      text = 3
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    TextComponent text_41
      letterHeight = 0.03
      pos = (-0.4, 0.03)
      startVal [time (s)] = 0.0
      text = 5
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    TextComponent text_32
      font = Heiti SC
      letterHeight = 0.035
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = 请按空格键继续。
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    KeyboardComponent key_resp_9
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    SoundComponent instr_3_9_sound_2
      sound = audio/instr_3_9.wav
      startVal [time (s)] = 0.0
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  Routine instr_3_12
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    TextComponent text_33
      font = Heiti SC
      letterHeight = 0.035
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
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      text:
        请判断：这个数字与往前数第2个数字 相同 还是 不同？
        (提示：您需要回忆刚才呈现过的数字，做出判断）
    TextComponent text_34
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        2
    TextComponent text_35
      font = Heiti SC
      letterHeight = 0.035
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
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      text:
        相同                      不同
         按z键                    按m键
    KeyboardComponent key_resp_10
      allowedKeys = 'z','m'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    SoundComponent instr_3_6_sound_2
      sound = audio/instr_3_2.wav
      startVal [time (s)] = 0.0
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  Routine instr_3_13
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    TextComponent text_36
      font = Heiti SC
      letterHeight = 0.035
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
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      text:
        正确答案是 不同 ，因为当前数字跟往前数第2个数字不同。
    TextComponent text_37
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        2
    TextComponent text_38
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.03
      pos = (-0.1, 0.03)
      startVal [time (s)] = 0.0
      text = 7
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    TextComponent text_39
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.03
      pos = (-0.2, 0.03)
      startVal [time (s)] = 0.0
      text = 3
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    TextComponent text_40
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.03
      pos = (-0.3, 0.03)
      startVal [time (s)] = 0.0
      text = 7
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    TextComponent text_42
      letterHeight = 0.03
      pos = (-0.4, 0.03)
      startVal [time (s)] = 0.0
      text = 3
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    TextComponent text_43
      letterHeight = 0.03
      pos = (-0.5, 0.03)
      startVal [time (s)] = 0.0
      text = 5
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    TextComponent text_44
      font = Heiti SC
      letterHeight = 0.035
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = 请按空格键继续。
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    KeyboardComponent key_resp_11
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    SoundComponent instr_3_9_sound_3
      sound = audio/instr_3_7.wav
      startVal [time (s)] = 0.0
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  Routine end_prac_judge
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    CodeComponent code_8
      Code Type = Auto->JS
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      End Routine:
        if key_into_prac.keys=='4':
            practice_judgement.finished=True
        else:
            practice_judgement.finished=False
    TextComponent into_prac
      font = Heiti SC
      letterHeight = 0.035
      startVal [time (s)] = 0.0
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      text:
        重复实验说明请按“1”

        进入练习请按“4”
    KeyboardComponent key_into_prac
      allowedKeys = '1','4'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instr
  Routine instr_2
  Routine instr_3
  Routine instr_3_1
  LoopInitiator practice_judgement loopType="TrialHandler"
    loopType = random
    nReps = 3
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    LoopInitiator instr_loop loopType="TrialHandler"
      loopType = random
      nReps = 1
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      Routine instr_3_2
      Routine instr_3_3
      Routine instr_3_4
      Routine instr_3_5
      Routine instr_3_6
      Routine instr_3_7
      Routine instr_3_8
      Routine instr_3_9
      Routine instr_3_10
      Routine instr_3_11
      Routine instr_3_12
      Routine instr_3_13
    LoopTerminator instr_loop
    Routine end_prac_judge
  LoopTerminator practice_judgement
  Routine instr_4
  Routine instr_4_3
  Routine instr_4_1
  Routine instr_4_2
  LoopInitiator prac_block_loop loopType="TrialHandler"
    loopType = sequential
    nReps = 3
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    Routine prac_rest
    Routine prac_fixation
    LoopInitiator prac_trials_loop loopType="TrialHandler"
      conditionsFile = trials_loop_zm.xlsx
      loopType = random
      nReps = 5
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      conditions:
        [{'cond': 'same', 'correctAns': 'z'},
        {'cond': 'different', 'correctAns': 'm'}]
      Routine prac_exp
      Routine prac_trial_fb
    LoopTerminator prac_trials_loop
    Routine prac_block_fb
  LoopTerminator prac_block_loop
  Routine instr_5
  LoopInitiator block_loop loopType="TrialHandler"
    loopType = sequential
    nReps = 4
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    conditions:
      [{'rest_text': '如果您准备好了，请按空格键开始练习。'},
      {'rest_text': '做得好！练习结束了。\n\n让我们开始正式实验吧。\n请注意，正式实验中不再提供正误反馈。\n\n\n请按空格键继续。'},
      {'rest_text': '做得好！休息一下吧。\n\n休息好后，请按空格键继续实验。\n\n后面实验的要求与之前是一样的。'}]
    Routine fixation
    LoopInitiator trials_loop loopType="TrialHandler"
      conditionsFile = trials_loop_zm.xlsx
      loopType = random
      nReps = 5
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      conditions:
        [{'cond': 'same', 'correctAns': 'z'},
        {'cond': 'different', 'correctAns': 'm'}]
      Routine exp
    LoopTerminator trials_loop
    Routine block_fb
  LoopTerminator block_loop
  Routine thanks
