PsychoPy2experiment version="2023.2.2"
Settings
  Audio lib = ptb
  Data filename = u'data/%s_1_7_1_%s_%s_%s' % (expInfo['主试ID'], expName, expInfo['编号'], expInfo['date'])
  Experiment info = {'编号': '', '主试ID': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  color = -1.0000, -1.0000, -1.0000
  expName = PALT_Delay
  keyboardBackend = ioHub
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Routines
  Routine instr
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    TextComponent instr_text
      font = Heiti SC
      letterHeight = 0.035
      startVal [time (s)] = 0.0
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      text:
        欢迎来到词语配对联想学习（延迟回忆）测验！

        一段时间前，您学习了12对词，现在我将测试您记住了多少对词。

        和刚才一样，我念每对词中前面的一个词，
        要求您答出和它一对的后面一个词来，
        比如念“桌子”，您就答“马车”，听明白了么？


        按空格键继续。
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    SoundComponent instr_sound
      sound = audio/instr.wav
      startVal [time (s)] = 0.0
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  Routine instr_2
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    TextComponent instr_2_text
      font = Heiti SC
      letterHeight = 0.035
      startVal [time (s)] = 0.0
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      text:
        12对词播放完毕后，就会开始测试，

        我念每对词中前面的一个词，

        要求您答出和它一对的后面一个词来，

        比如念“桌子”，您就答“马车”，听明白了么？


        按空格键继续。
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    SoundComponent instr_2_sound
      sound = audio/instr_2.wav
      startVal [time (s)] = 0.0
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  Routine instr_3
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    TextComponent instr_3_text
      font = Heiti SC
      letterHeight = 0.035
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $instruction
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    SoundComponent instr_3_sound
      sound [set every repeat] = $instructions_sound
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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  Routine read2
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  Routine instr_4
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    TextComponent instr_4_text
      font = Heiti SC
      letterHeight = 0.035
      startVal [time (s)] = 0.0
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      text:
        请注意，每对词允许的回忆时间为5秒。

        请在看到“请作答”的提示字样后作答。


        按空格键开始。
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    SoundComponent instr_4_sound
      sound = audio/instr_4.wav
      startVal [time (s)] = 0.0
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  Routine S1
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    CodeComponent code_2
      Code Type = JS
      End JS Routine:
        sound_1 = new sound.Sound({
              win: psychoJS.window,
              value: 'A',
              secs: 1.5,
              });
        sound_1.setVolume(1.0);
    SoundComponent sound_1
      sound [set every repeat] = $sound1
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.5
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    ImageComponent image
      image = player_icon.jpg
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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  Routine S2
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    CodeComponent code_3
      Code Type = JS
      End JS Routine:
        sound_2 = new sound.Sound({
              win: psychoJS.window,
              value: 'A',
              secs: 1.5,
              });
        sound_2.setVolume(1.0);
    SoundComponent sound_2
      sound [set every repeat] = $sound2
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.5
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    ImageComponent image_2
      image = player_icon.jpg
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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  Routine interval
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    TextComponent text_2
      font = STSong
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine recall
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    TextComponent recall_text
      font = Heiti SC
      letterHeight = 0.035
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
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      text:
        回忆结束，现在，请想一想，您刚才是用什么方法记忆这些词对的？

        您可以具体回忆一下刚才记忆成功的词对，想想您是如何记住它们的。

        请直接输入文字，并点击蓝色方格提交。
    TextboxComponent textbox
      bold = False
      editable = True
      font = Heiti SC
      letterHeight = 0.05
      placeholder = 请大致描述您记忆词对的方式...
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ButtonComponent button
      bold = False
      fillColor = -1.0000, -1.0000, 0.0902
      font = Heiti SC
      forceEndRoutine = True
      letterHeight = 0.035
      pos = (0, -0.3)
      size = (0.1, 0.06)
      startVal [time (s)] = 0
      text = 提交
      units = height
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  Routine thanks
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    TextComponent endpage
      font = Heiti SC
      letterHeight = 0.035
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = 实验结束，感谢您的参与！
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  Routine answer
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    SoundComponent sound_3
      sound [set every repeat] = $prompt
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.5
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    ImageComponent image_3
      image = player_icon.jpg
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    TextComponent text
      font = Heiti SC
      letterHeight = 0.035
      pos = (0, -0.1)
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 1.0
      text = 请作答
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    MicrophoneComponent mic
      channels = auto
      device = None
      maxSize = 24000
      outputType = default
      sampleRate = DVD Audio (48kHz)
      speakTimes = True
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 5
      transcribe = False
      transcribeBackend = Google
      transcribeLang = en-US
      transcribeWhisperModel = base
      trimSilent = False
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    CodeComponent code
      Code Type = JS
      Before JS Experiment:
        /* BEGIN CUSTOM CODE */
        ;(async () => {
          // Ask for pemission to use the mic
          const stream = await navigator.mediaDevices.getUserMedia({ audio: true });
        })();
        /* END */
      End JS Routine:
        sound_3 = new sound.Sound({
              win: psychoJS.window,
              value: 'A',
              secs: 1.5,
              });
        sound_3.setVolume(1.0);
    ImageComponent image_4
      image = mic_icon.jpg
      pos = (0, 0.1)
      size = (0.1, 0.1)
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 5
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Flow
  Routine instr
  Routine instr_4
  LoopInitiator answer_trials loopType="TrialHandler"
    conditionsFile = answer_sound.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'prompt': 'audio/西瓜.wav'},
      {'prompt': 'audio/太阳.wav'},
      {'prompt': 'audio/困难.wav'},
      {'prompt': 'audio/团结.wav'},
      {'prompt': 'audio/勇敢.wav'},
      {'prompt': 'audio/北方.wav'},
      {'prompt': 'audio/老师.wav'},
      {'prompt': 'audio/站着.wav'},
      {'prompt': 'audio/热心.wav'},
      {'prompt': 'audio/光明.wav'},
      {'prompt': 'audio/颜色.wav'},
      {'prompt': 'audio/牲口.wav'}]
    Routine answer
  LoopTerminator answer_trials
  Routine recall
  Routine thanks
