PsychoPy2experiment version="2023.2.2"
Settings
  Data filename = u'data/%s_3_2_1_%s_%s_%s' % (expInfo['主试ID'], expName, expInfo['编号'], expInfo['date'])
  Experiment info = {'编号': '', '主试ID': ''}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['Line_resources/line53.xlsx', 'Line_resources/line52.xlsx', 'Line_resources/line51.xlsx', 'Line_resources/line50.xlsx', 'Line_resources/line49.xlsx', 'Line_resources/line48.xlsx', 'Line_resources/line47.xlsx', 'Line_resources/line46.xlsx', 'Line_resources/line45.xlsx', 'Line_resources/line44.xlsx', 'Line_resources/line43.xlsx', 'Line_resources/line42.xlsx', 'Line_resources/line41.xlsx', 'Line_resources/line40.xlsx']
  Save log file = False
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  color = 1.0000, 1.0000, 1.0000
  expName = VisualAcuity
  keyboardBackend = ioHub
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Routines
  Routine Title
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    TextComponent title
      color = black
      letterHeight = 0.15
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 视力测试
      units = norm
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    TextComponent title_2
      color = black
      letterHeight = 0.08
      pos = (0, -0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 按空格键继续
      units = norm
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine scale_set_up
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    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Experiment:
        oldt=0
        x_size=8.560
        y_size=5.398
        screen_height=0

        if win.units=='norm':
            x_scale=.05
            y_scale=.1
            dbase = .0001
            unittext=' norm units'
            vsize=2
        elif win.units=='pix':
            x_scale=60
            y_scale=40
            dbase = .1
            unittext=' pixels'
            vsize=win.size[1]
        else:
            x_scale=.05
            y_scale=.05
            dbase = .0001
            unittext=' height units'
            vsize=1
    TextComponent intro
      color = black
      letterHeight = 0.08
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
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      text:
        实验要求：被试距离屏幕2米远，平视屏幕中心，按键由主试控制，
        或外接键盘。
        设备要求：屏幕尺寸应大于或等于14英寸。

        注：本程序依照GB11533—2011《标准对数视力表》编写。其中
        视标视角及边长的确定、视标的绘制、视力记录的确定及其随实际
        测试距离变化的校正、视力测试方法等，均与上述标准保持一致。

        按空格键继续
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine screen_scale_keys
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    CodeComponent code_scale
      Code Type = Auto->JS
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      Begin Routine:
        print('key start')
        event.clearEvents()
      Each Frame:
        keys=event.getKeys()

        if len(keys):
            if t-oldt<.5:
                dscale=5*dbase
                oldt=t
            else:
                dscale=dbase
                oldt=t
            if 'space' in keys and t > 1:
                continueRoutine=False
            elif 'up' in keys:
                y_scale=round((y_scale+dscale)*10000)/10000
            elif 'down' in keys:
                y_scale=round((y_scale-dscale)*10000)/10000
            elif 'left' in keys:
                x_scale=round((x_scale-dscale)*10000)/10000
            elif 'right' in keys:
                x_scale=round((x_scale+dscale)*10000)/10000
            screen_height=round(vsize*10/y_scale)/10
            text_bottom.text='X Scale = '+str(x_scale)+unittext+' per cm, Y Scale = '+str(y_scale)+unittext+' per cm\nScreen height = '+str(screen_height)+' cm\n\n按空格键继续'
            ccimage.size=[x_size*x_scale, y_size*y_scale]
      End Routine:
        thisExp.addData('X Scale',x_scale)
        thisExp.addData('Y Scale',y_scale)
    TextComponent text_top
      color = black
      letterHeight = 0.08
      pos = (0, .7)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.5
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      text:
        首先我们需要根据不同设备分辨率进行校正。
        请调整屏幕上这张“信用卡图”，直到它的大小和真实的信用卡一样。
        【上下键可以调整高度】
        【左右键可以调整宽度】
    TextComponent text_bottom
      color = black
      letterHeight = 0.05
      pos = (0, -.6)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.5
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    ImageComponent ccimage
      image = Image/bank-1300155_640.png
      size = $(x_size*x_scale, y_size*y_scale)
      startVal [time (s)] = 0.0
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  Routine rectangle_keys
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    TextComponent rectangle_text_keys
      color = black
      letterHeight = 0.08
      pos = (0, -.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.5
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      text [set every repeat]:
        根据您之前的调节，此处显示的应该是一个10x10cm的正方形，
        如果不是的话，请退出程序再试一次。
        如果没问题，按空格键继续。
    PolygonComponent polygon
      fillColor = gray
      lineColor = gray
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = (10*x_scale, 10*y_scale)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_keys
      allowedKeys = ['space']
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Intro1
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    TextComponent text_3
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        下面将开始进行正式视力测验。
        请观察视标“E”的开口方向，按方向键选择。

        按空格键继续。
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial
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    ImageComponent image
      image [set every repeat] = $orient
      saveStartStop = False
      size [set every repeat] = (size_cm*x_scale,size_cm*y_scale)
      startVal [time (s)] = 0.1
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    KeyboardComponent key_resp
      allowedKeys = 'left','right','up','down'
      correctAns = $corr_ans
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.1
      storeCorrect = True
      syncScreenRefresh = False
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        Line = 0
      End Routine:
        if key_resp.corr == 0:
            if line == 40:
                Line = 40
                continueRoutine = False
                trials.finished = True
            else:
                Line = line - 1
                continueRoutine = False
                trials.finished = True
        elif line == 53:
            Line = 53
            continueRoutine = False
            trials.finished = True

        #print(Line)
  Routine routine_1
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        count_cor_num = 0
        Linefile = 'Line_resources/line' + str(Line) + '.xlsx'
  Routine trial_2
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    ImageComponent image_2
      image [set every repeat] = $orient
      saveStartStop = False
      size [set every repeat] = (size_cm*x_scale,size_cm*y_scale)
      startVal [time (s)] = 0.1
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    KeyboardComponent key_resp_2
      allowedKeys = 'left','right','up','down'
      correctAns = $corr_ans
      forceEndRoutine = True
      startVal [time (s)] = 0.1
      storeCorrect = True
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Experiment:
        A = -1
        B = -1
      Begin Routine:
        breakcondition = 0
      End Routine:
        if key_resp_2.corr == 0: #中途辨别错误
            if A == -1: #A还未出现
                if Line == 40: #当前是否为第一行
                    A = '超出测量范围'
                    B = count_cor_num
                    breakcondition = 1
                    continueRoutine = False
                    trials_3.finished = True #结束循环
                else:
                    Line = line - 1 #进入上一行
                    continueRoutine = False
                    trials_3.finished = True #结束循环
            else: #A出现过，即至少有1行完全正确
                if count_cor_num > (num/2):
                    A = (Line + 1)/10
                else:
                    A = Line/10
                B = count_cor_num
                breakcondition = 1
                continueRoutine = False
                trials_3.finished = True #结束循环
        else: #没错
            count_cor_num += 1
            if trials_3.thisN == num-1:
                A = Line/10 #一整行都没错，Line赋给A
                if Line == 53: #当前是否为最后一行,能到这就是全对
                    B = 0
                    breakcondition = 1
                    continueRoutine = False
                    trials_3.finished = True #结束循环
                else:
                    Line = line + 1

        print('Line=',Line,',A=',A,',B=',B,',count=',count_cor_num)
  Routine endcode
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    CodeComponent code_5
      Code Type = Auto->JS
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      End Routine:
        if breakcondition == 1:
            continueRoutine = False
            trials_2.finished = True #结束循环

        thisExp.addData('FinalLine', Line)
        thisExp.addData('A', A)
        thisExp.addData('B', B)

        #print('final Line=',Line,',A=',A,',B=',B,',count=',count_cor_num,',breakcondition =', breakcondition)
  Routine output
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    CodeComponent code_11
      Code Type = Auto->JS
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      Begin Routine:
        msg = '您的结果是：'+ str(A)
      End Routine:
        thisExp.addData('视力最终结果', A)
    TextComponent text_6
      color = black
      letterHeight = 0.08
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
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      text:
        视力测试完成。
        测量范围(5分)：3.7-5.1





        按空格键退出程序。
    TextComponent text_7
      color = black
      letterHeight = 0.08
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg
      units = norm
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    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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Flow
  Routine Title
  Routine scale_set_up
  Routine screen_scale_keys
  Routine rectangle_keys
  Routine Intro1
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Line_resources/loop1.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'line': 40, 'orient': 'Image/E_right.png', 'size_cm': 2.909, 'corr_ans': 'right'},
      {'line': 41, 'orient': 'Image/E_left.png', 'size_cm': 2.311, 'corr_ans': 'left'},
      {'line': 42, 'orient': 'Image/E_up.png', 'size_cm': 1.835, 'corr_ans': 'up'},
      {'line': 43, 'orient': 'Image/E_down.png', 'size_cm': 1.458, 'corr_ans': 'down'},
      {'line': 44, 'orient': 'Image/E_up.png', 'size_cm': 1.158, 'corr_ans': 'up'},
      {'line': 45, 'orient': 'Image/E_right.png', 'size_cm': 0.92, 'corr_ans': 'right'},
      {'line': 46, 'orient': 'Image/E_left.png', 'size_cm': 0.731, 'corr_ans': 'left'},
      {'line': 47, 'orient': 'Image/E_down.png', 'size_cm': 0.58, 'corr_ans': 'down'},
      {'line': 48, 'orient': 'Image/E_right.png', 'size_cm': 0.461, 'corr_ans': 'right'},
      {'line': 49, 'orient': 'Image/E_left.png', 'size_cm': 0.366, 'corr_ans': 'left'},
      {'line': 50, 'orient': 'Image/E_up.png', 'size_cm': 0.291, 'corr_ans': 'up'},
      {'line': 51, 'orient': 'Image/E_down.png', 'size_cm': 0.231, 'corr_ans': 'down'},
      {'line': 52, 'orient': 'Image/E_up.png', 'size_cm': 0.184, 'corr_ans': 'up'},
      {'line': 53, 'orient': 'Image/E_right.png', 'size_cm': 0.146, 'corr_ans': 'right'}]
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    loopType = sequential
    nReps = 15
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    Routine routine_1
    LoopInitiator trials_3 loopType="TrialHandler"
      conditionsFile = $Linefile
      loopType = sequential
      nReps = 1
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      Routine trial_2
    LoopTerminator trials_3
    Routine endcode
  LoopTerminator trials_2
  Routine output
