PsychoPy2experiment version="2023.2.2"
Settings
  Audio latency priority = 1
  Audio lib = ptb
  Data filename = u'data/%s_3_4_1_%s_%s_%s' % (expInfo['主试ID'], expName, expInfo['编号'], expInfo['date'])
  Experiment info = {'编号': '', '主试ID': ''}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['noise_SNR_phonemes/ba_rms.wav', 'noise_SNR_phonemes/ca_rms.wav', 'noise_SNR_phonemes/cha_rms.wav', 'noise_SNR_phonemes/da_rms.wav', 'noise_SNR_phonemes/ga_rms.wav', 'noise_SNR_phonemes/ha_rms.wav', 'noise_SNR_phonemes/jia_rms.wav', 'noise_SNR_phonemes/ka_rms.wav', 'noise_SNR_phonemes/la_rms.wav', 'noise_SNR_phonemes/ma_rms.wav', 'noise_SNR_phonemes/na_rms.wav', 'noise_SNR_phonemes/pa_rms.wav', 'noise_SNR_phonemes/qia_rms.wav', 'noise_SNR_phonemes/sa_rms.wav', 'noise_SNR_phonemes/sha_rms.wav', 'noise_SNR_phonemes/SNR-0ba_rms.wav', 'noise_SNR_phonemes/SNR-0ca_rms.wav', 'noise_SNR_phonemes/SNR-0cha_rms.wav', 'noise_SNR_phonemes/SNR-0da_rms.wav', 'noise_SNR_phonemes/SNR-0ga_rms.wav', 'noise_SNR_phonemes/SNR-0ha_rms.wav', 'noise_SNR_phonemes/SNR-0jia_rms.wav', 'noise_SNR_phonemes/SNR-0ka_rms.wav', 'noise_SNR_phonemes/SNR-0la_rms.wav', 'noise_SNR_phonemes/SNR-0ma_rms.wav', 'noise_SNR_phonemes/SNR-0na_rms.wav', 'noise_SNR_phonemes/SNR-0pa_rms.wav', 'noise_SNR_phonemes/SNR-0qia_rms.wav', 'noise_SNR_phonemes/SNR-0sa_rms.wav', 'noise_SNR_phonemes/SNR-0sha_rms.wav', 'noise_SNR_phonemes/SNR-0ta_rms.wav', 'noise_SNR_phonemes/SNR-0wa_rms.wav', 'noise_SNR_phonemes/SNR-0xia_rms.wav', 'noise_SNR_phonemes/SNR-0ya_rms.wav', 'noise_SNR_phonemes/SNR-0za_rms.wav', 'noise_SNR_phonemes/SNR-0zha_rms.wav', 'noise_SNR_phonemes/SNR-4ba_rms.wav', 'noise_SNR_phonemes/SNR-4ca_rms.wav', 'noise_SNR_phonemes/SNR-4cha_rms.wav', 'noise_SNR_phonemes/SNR-4da_rms.wav', 'noise_SNR_phonemes/SNR-4ga_rms.wav', 'noise_SNR_phonemes/SNR-4ha_rms.wav', 'noise_SNR_phonemes/SNR-4jia_rms.wav', 'noise_SNR_phonemes/SNR-4ka_rms.wav', 'noise_SNR_phonemes/SNR-4la_rms.wav', 'noise_SNR_phonemes/SNR-4ma_rms.wav', 'noise_SNR_phonemes/SNR-4na_rms.wav', 'noise_SNR_phonemes/SNR-4pa_rms.wav', 'noise_SNR_phonemes/SNR-4qia_rms.wav', 'noise_SNR_phonemes/SNR-4sa_rms.wav', 'noise_SNR_phonemes/SNR-4sha_rms.wav', 'noise_SNR_phonemes/SNR-4ta_rms.wav', 'noise_SNR_phonemes/SNR-4wa_rms.wav', 'noise_SNR_phonemes/SNR-4xia_rms.wav', 'noise_SNR_phonemes/SNR-4ya_rms.wav', 'noise_SNR_phonemes/SNR-4za_rms.wav', 'noise_SNR_phonemes/SNR-4zha_rms.wav', 'noise_SNR_phonemes/SNR-8ba_rms.wav', 'noise_SNR_phonemes/SNR-8ca_rms.wav', 'noise_SNR_phonemes/SNR-8cha_rms.wav', 'noise_SNR_phonemes/SNR-8da_rms.wav', 'noise_SNR_phonemes/SNR-8ga_rms.wav', 'noise_SNR_phonemes/SNR-8ha_rms.wav', 'noise_SNR_phonemes/SNR-8jia_rms.wav', 'noise_SNR_phonemes/SNR-8ka_rms.wav', 'noise_SNR_phonemes/SNR-8la_rms.wav', 'noise_SNR_phonemes/SNR-8ma_rms.wav', 'noise_SNR_phonemes/SNR-8na_rms.wav', 'noise_SNR_phonemes/SNR-8pa_rms.wav', 'noise_SNR_phonemes/SNR-8qia_rms.wav', 'noise_SNR_phonemes/SNR-8sa_rms.wav', 'noise_SNR_phonemes/SNR-8sha_rms.wav', 'noise_SNR_phonemes/SNR-8ta_rms.wav', 'noise_SNR_phonemes/SNR-8wa_rms.wav', 'noise_SNR_phonemes/SNR-8xia_rms.wav', 'noise_SNR_phonemes/SNR-8ya_rms.wav', 'noise_SNR_phonemes/SNR-8za_rms.wav', 'noise_SNR_phonemes/SNR-8zha_rms.wav', 'noise_SNR_phonemes/ta_rms.wav', 'noise_SNR_phonemes/wa_rms.wav', 'noise_SNR_phonemes/xia_rms.wav', 'noise_SNR_phonemes/ya_rms.wav', 'noise_SNR_phonemes/za_rms.wav', 'noise_SNR_phonemes/zha_rms.wav']
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  color = -1.0000, -1.0000, -1.0000
  expName = PhonemeNoiseIdenti
  keyboardBackend = ioHub
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Routines
  Routine intro
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    TextComponent text
      color = 1.0000, 1.0000, 1.0000
      font = Heiti SC
      letterHeight = 0.035
      startVal [time (s)] = 0.0
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      text:
        欢迎来到噪声下音节识别任务！

        请在看到星号注视点时，认真听音节
        如果听到噪声干扰，请认真分辨噪声中的音节

        请在看到选项后，选择您听到的音节
        按z键选择屏幕左侧音节
        按m键选择屏幕右侧音节

        准备好请按空格开始练习
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    SoundComponent intro_sound
      sound = intro.wav
      startVal [time (s)] = 0.0
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  Routine phoneme_start
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    ImageComponent fixation_sound_star
      image = star.png
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    SoundComponent sound_1
      sound [set every repeat] = $trial_sound
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine fix2
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    ImageComponent fixation_star
      image = star.png
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
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    CodeComponent code_2
      Code Type = JS
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      Begin JS Routine:
        trial_sound = ("noise_SNR_phonemes/" + trial);

        sound_1 = new sound.Sound({
              win: psychoJS.window,
              value: 'A',
              secs: 2,
              });
        sound_1.setVolume(1.0);
  Routine fix1_2
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  Routine fix_practice
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    ImageComponent fix_practice_star
      image = star.png
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
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    CodeComponent code_fixpre
      Code Type = JS
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      End JS Routine:
        trial_sound_prac = ("noise_SNR_phonemes/" + trial_prac);

        sound_practice = new sound.Sound({
              win: psychoJS.window,
              value: 'A',
              secs: 2,
              });
        sound_practice.setVolume(1.0);
  Routine phoneme_practice
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    ImageComponent fixation_sound_practice_star
      image = star.png
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    SoundComponent sound_practice
      sound [set every repeat] = $trial_sound_prac
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine response_key
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    TextComponent word1
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.2
      pos = (-0.3, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $key_rt1
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    KeyboardComponent response_sound
      allowedKeys = 'z','m'
      correctAns = $accuracy
      durationEstim = 3
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent word2
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.2
      pos = (0.3, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $key_rt2
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  Routine response_key_practice
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    TextComponent word1_prac
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.2
      pos = (-0.3, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $key_rt1_prac
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    KeyboardComponent response_sound_prac
      allowedKeys = 'z','m'
      correctAns = $accuracy_prac
      durationEstim = 3
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent word2_prac
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.2
      pos = (0.3, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $key_rt2_prac
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    CodeComponent code_feedback
      Code Type = Auto->JS
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      End Routine:
        if response_sound_prac.corr:
            response_text='正确'
        else:
            response_text='错误，请认真分辨'
  Routine reponse_acc
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    TextComponent resepons_feedback
      color = 1.0000, 1.0000, 1.0000
      font = Heiti SC
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $response_text
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  Routine response_feedback_judgement
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    TextComponent intro_practice
      color = 1.0000, 1.0000, 1.0000
      font = Heiti SC
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        继续练习请按“1”
        开始任务请按“4”
    KeyboardComponent key_resp_introprac
      allowedKeys = '1','4'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_3
      Code Type = Auto->JS
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      End Routine:
        if key_resp_introprac.keys=='4':
            practice_judgement.finished=True
        else:
            practice_judgement.finished=False
  Routine intro_real
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    TextComponent intro_real_data
      font = Heiti SC
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = 接下来开始正式任务！
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  Routine exprement_goodbye
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    TextComponent text_3
      color = 1.0000, 1.0000, 1.0000
      font = Heiti SC
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        实验结束。

        感谢您的参与！
Flow
  Routine intro
  LoopInitiator practice_judgement loopType="TrialHandler"
    loopType = random
    nReps = 3
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    LoopInitiator experi_practice loopType="TrialHandler"
      conditionsFile = data_trials_practice.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'trial_prac': 'SNR-0wa_rms.wav', 'condition_prac': 0, 'key_rt1_prac': 'wa', 'key_rt2_prac': 'ya', 'accuracy_prac': 'z'},
        {'trial_prac': 'SNR-0xia_rms.wav', 'condition_prac': 0, 'key_rt1_prac': 'xia', 'key_rt2_prac': 'ya', 'accuracy_prac': 'z'},
        {'trial_prac': 'SNR-4wa_rms.wav', 'condition_prac': 4, 'key_rt1_prac': 'wa', 'key_rt2_prac': 'ya', 'accuracy_prac': 'z'},
        {'trial_prac': 'SNR-4xia_rms.wav', 'condition_prac': 4, 'key_rt1_prac': 'xia', 'key_rt2_prac': 'ya', 'accuracy_prac': 'z'},
        {'trial_prac': 'wa_rms.wav', 'condition_prac': 10, 'key_rt1_prac': 'wa', 'key_rt2_prac': 'ya', 'accuracy_prac': 'z'},
        {'trial_prac': 'xia_rms.wav', 'condition_prac': 10, 'key_rt1_prac': 'xia', 'key_rt2_prac': 'ya', 'accuracy_prac': 'z'}]
      Routine fix_practice
      Routine phoneme_practice
      Routine response_key_practice
      Routine reponse_acc
    LoopTerminator experi_practice
    Routine response_feedback_judgement
  LoopTerminator practice_judgement
  Routine intro_real
  LoopInitiator experi_real loopType="TrialHandler"
    conditionsFile = data_trials.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'trial': 'SNR-0ba_rms.wav', 'condition': 0, 'key_rt1': 'ba', 'key_rt2': 'pa', 'accuracy': 'z'},
      {'trial': 'SNR-0ca_rms.wav', 'condition': 0, 'key_rt1': 'ca', 'key_rt2': 'cha', 'accuracy': 'z'},
      {'trial': 'SNR-0cha_rms.wav', 'condition': 0, 'key_rt1': 'ca', 'key_rt2': 'cha', 'accuracy': 'm'},
      {'trial': 'SNR-0da_rms.wav', 'condition': 0, 'key_rt1': 'da', 'key_rt2': 'ta', 'accuracy': 'z'},
      {'trial': 'SNR-0ga_rms.wav', 'condition': 0, 'key_rt1': 'ga', 'key_rt2': 'ka', 'accuracy': 'z'},
      {'trial': 'SNR-0ha_rms.wav', 'condition': 0, 'key_rt1': 'ha', 'key_rt2': 'fa', 'accuracy': 'z'},
      {'trial': 'SNR-0jia_rms.wav', 'condition': 0, 'key_rt1': 'jia', 'key_rt2': 'qia', 'accuracy': 'z'},
      {'trial': 'SNR-0ka_rms.wav', 'condition': 0, 'key_rt1': 'ga', 'key_rt2': 'ka', 'accuracy': 'm'},
      {'trial': 'SNR-0la_rms.wav', 'condition': 0, 'key_rt1': 'la', 'key_rt2': 'na', 'accuracy': 'z'},
      {'trial': 'SNR-0ma_rms.wav', 'condition': 0, 'key_rt1': 'ma', 'key_rt2': 'na', 'accuracy': 'z'},
      {'trial': 'SNR-0na_rms.wav', 'condition': 0, 'key_rt1': 'ma', 'key_rt2': 'na', 'accuracy': 'm'},
      {'trial': 'SNR-0pa_rms.wav', 'condition': 0, 'key_rt1': 'ba', 'key_rt2': 'pa', 'accuracy': 'm'},
      {'trial': 'SNR-0qia_rms.wav', 'condition': 0, 'key_rt1': 'jia', 'key_rt2': 'qia', 'accuracy': 'm'},
      {'trial': 'SNR-0sa_rms.wav', 'condition': 0, 'key_rt1': 'sa', 'key_rt2': 'sha', 'accuracy': 'z'},
      {'trial': 'SNR-0sha_rms.wav', 'condition': 0, 'key_rt1': 'sa', 'key_rt2': 'sha', 'accuracy': 'm'}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
    Routine fix2
    Routine phoneme_start
    Routine response_key
  LoopTerminator experi_real
  Routine exprement_goodbye
